PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = Practice Background
  keyboardBackend = ioHub
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Routines
  Routine INTRO
    TextComponent Introduction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the set of possible colors for CGE

        Press 'SPACE'
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BG2
    PolygonComponent polygon
      fillColor = -0.5137, 0.8039, -0.2784
      lineColor = -0.5137, 0.8039, -0.2784
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BG3
    PolygonComponent polygon_3
      fillColor = 0.9294, 0.3569, 0.0118
      lineColor = 0.9294, 0.3569, 0.0118
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BG4
    PolygonComponent polygon_4
      fillColor = -0.0824, 0.6235, 0.9843
      lineColor = -0.0824, 0.6235, 0.9843
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BG1
    PolygonComponent polygon_2
      fillColor = 0.5059, 0.5059, 0.5059
      lineColor = 0.5059, 0.5059, 0.5059
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BG5
    PolygonComponent polygon_5
      fillColor = 0.3020, 0.2549, 0.5529
      lineColor = 0.3020, 0.2549, 0.5529
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BG6
    PolygonComponent polygon_6
      fillColor = 0.4745, 0.3725, -0.3647
      lineColor = 0.4745, 0.3725, -0.3647
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BG7
    PolygonComponent polygon_7
      fillColor = 0.7020, 0.1922, 0.2392
      lineColor = 0.7020, 0.1922, 0.2392
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BG8
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  Routine BG9
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  Routine BG10
    PolygonComponent polygon_10
      fillColor = 0.0039, 0.0039, 0.0039
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine INTRO
  Routine BG1
  Routine BG2
  Routine BG3
  Routine BG4
  Routine BG5
  Routine BG6
  Routine BG7
  Routine BG8
  Routine BG9
  Routine BG10
