PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Basic
  keyboardBackend = ioHub
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Routines
  Routine Response
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press a letter from a to c
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'a','b','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        End of Task

        Press "SPACE"
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = To start press "SPACE"
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Next_Trial
Flow
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine Response
  LoopTerminator trials
  Routine End
