PsychoPy2experiment version="2022.2.4"
Settings
  Completed URL = $'https://udenver.qualtrics.com/jfe/form/SV_a4qaGzutOwOjcPk?id='+expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Incomplete URL = https://du.sona-systems.com
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.1
  Window size (pixels) = [1920, 1080]
  color = $[0.5216,0.5216,0.5216]
  expName = cgeRDMtask
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine pracStart
    TextComponent pracStartText
      color = $color2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        There will now be 5 practice trials.

        When you are ready to begin the practice, press "V" or "N".
    KeyboardComponent pracStartResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine END
    TextComponent ThankYou
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      wrapWidth = wrap
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      text:
        Thank you! You have sucessfully completed the second portion of this study.

        You will now be automatically redirected to Qualtrics.
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  Routine pracChoice
    CodeComponent pracChoiceRandLoc
      Code Type = Both
      Begin Experiment:
        textHeight = 0.05;
      Begin JS Experiment:
        textHeight = 0.05;
      Begin JS Routine:
        var pracLossRounded, pracGainRounded, pracSafeRounded

        if ((loc === 1)) {
            targetPos = [(- 0.35), 0];
        } else {
            targetPos = [0.35, 0];
        }
        if ((loc === 1)) {
            lossLoc = [(- 0.35), (- 0.1)];
            gainLoc = [(- 0.35), 0.1];
            safeLoc = [0.35, 0];
        } else {
            lossLoc = [0.35, (- 0.1)];
            gainLoc = [0.35, 0.1];
            safeLoc = [(- 0.35), 0];
        }


        //pracLossRounded = riskyLoss
        //pracGainRounded = riskyGain
        //pracSafeRounded = alternative

        /*
         function roundToTwo(num) {
                return +(Math.round(num + "e+2")  + "e-2");
         }
        */

        pracLossRounded = `$${Math.round(riskyLoss)}`;
        //pracGainRounded = `$${roundToTwo(riskyGain*100)/100}`;
        //pracSafeRounded = `$${roundToTwo(alternative*100)/100}`;

        pracGainRounded = `$${Math.round(riskyGain*100)/100}`;
        pracSafeRounded = `$${Math.round(alternative*100)/100}`;

        //console.log(pracLossRounded)
        //console.log(pracGainRounded)
        //console.log(pracSafeRounded)
      Begin Routine:
        ### Randomized Practice Trial Locations
        if loc==1:
            riskLineLoc=[-.35,0] #targetPos
        else:
            riskLineLoc=[.35,0] #targetPos

        if loc==1:
            lossLoc=[-.35,-.1]
            gainLoc=[-.35,.1]
            safeLoc=[.35,0]
        else:
            lossLoc=[.35,-.1]
            gainLoc=[.35,.1]
            safeLoc=[-.35,0]

        # Rounding Presentation of Monetary Values
        pracLossRounded = '$%.0f' % round(riskyLoss,0)
        pracGainRounded = '$%.2f' % round(riskyGain,2)
        pracSafeRounded = '$%.2f' % round(alternative,2)
    PolygonComponent pracCircLeft
      fillColor = $color2
      lineColor = $color2
      nVertices = 130
      pos = circLeftLoc
      shape = circle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent pracCircRight
      fillColor [set every repeat] = $color2
      lineColor [set every repeat] = $color2
      nVertices = 130
      pos = circRightLoc
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent pracRiskLine
      fillColor = $color1
      lineColor = $color1
      lineWidth = 3
      pos [set every repeat] = riskLineLoc
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent pracORtext
      color = $color2
      letterHeight = 0.05
      pos = ORtextLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent pracLossText
      color = $color1
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $pracLossRounded
    TextComponent pracGainText
      color = $color1
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $pracGainRounded
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    TextComponent pracSafeText
      color = $color1
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $pracSafeRounded
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    TextComponent pracVleft
      color = $color2
      letterHeight = 0.05
      pos = VleftLoc
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = V-Left
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    TextComponent pracNright
      color = $color2
      letterHeight = 0.05
      pos = NrightLoc
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = N-Right
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    KeyboardComponent pracChoiceResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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  Routine pracISI
    TextComponent isiPracFix
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
      text = +
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  Routine pracOutcome
    CodeComponent pracOCcode
      Code Type = Both
      Begin JS Experiment:
        var outcome, noRespLoc, ocLoc, ocGambleLoc, ocSafeLoc, hideGamLoc, pracFeedbackRounded, extraITI;



        noRespLoc = [0,0]
        ocLoc= [0,0]
        ocGambleLoc = [0,0]
        ocSafeLoc = [0,0]
        hideGamLoc = [0,0]
      Begin JS Routine:
        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }

        if (pracChoiceResp.keys === undefined){
            outcome = " ";
            noRespLoc = [0,0];
            ocLoc = [5,5];
            ocGambleLoc = [5,5];
            ocSafeLoc = [5,5];
            hideGamLoc = [5,5];
            extraITI = 0;
        }else if(pracChoiceResp.keys =='v' && loc ==1) {
            outcome = random_item([riskyGain, riskyLoss])
            extraITI = 4-pracChoiceResp.rt
            if(outcome == riskyGain){
                ocLoc = [-.35,.1];
                ocGambleLoc = [-.35,0];
                ocSafeLoc = [5,5];
                noRespLoc = [5,5];
                hideGamLoc = [-.35,-.125];
            } else if (outcome ==riskyLoss){
                ocLoc = [-.35,-.1];
                ocGambleLoc = [-.35,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [-.35,.125];
                noRespLoc = [5,5];
            }
        } else if(pracChoiceResp.keys == 'v' && loc ==2){
            extraITI = 4-pracChoiceResp.rt
            outcome = alternative
            ocLoc = [-.35,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (pracChoiceResp.keys=='n' && loc ==1){
            extraITI = 4-pracChoiceResp.rt
            outcome = alternative
            ocLoc = [.35,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (pracChoiceResp.keys =='n' && loc ==2){
            outcome = random_item([riskyGain, riskyLoss]);
            extraITI = 4-pracChoiceResp.rt
            if (outcome == riskyGain){
                ocLoc = [.35,.1];
                ocGambleLoc = [.35,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.35,-.125];
                noRespLoc = [5,5];
            } else if (outcome == riskyLoss){
                ocLoc = [.35,-.1];
                ocGambleLoc = [.35,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.35,.125];
                noRespLoc = [5,5];
            }
        }

        /*
         function roundToTwo(num) {
                return +(Math.round(num + "e+2")  + "e-2");
         }
        */

        if (outcome == riskyLoss){
            //pracFeedbackRounded = $${Math.round(outcome)}
            pracFeedbackRounded = "$" + Math.round(outcome)
        } else {
            //pracFeedbackRounded = $${Math.round(outcome*100)/100};
            //pracFeedbackRounded = "$" + Math.round(outcome*100)/100
            pracFeedbackRounded = "$" + (Math.round(outcome*100)/100).toFixed(2)
        }

        //console.log("rounded feedback:",pracFeedbackRounded)
        //console.log("extra ITI", extraITI)
        //console.log("rt",choice1.rt)
        //console.log("iti", iti)
        //console.log("combined itis", extraITI + iti)
      Begin Routine:
        import random
        import math
        if not pracChoiceResp.keys:
            outcome = math.nan
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif pracChoiceResp.keys == 'v' and loc == 1:
            outcome = random.choice([riskyGain, riskyLoss])
            extraITI = 4-pracChoiceResp.rt
            if outcome == riskyGain:
                ocLoc = [-.35,.1]
                ocGambleLoc = [-.35,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.35,-.15] #.125
            elif outcome == riskyLoss:
                 ocLoc = [-.35,-.1]
                 ocGambleLoc = [-.35,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.35,.15]
                 noRespLoc = [5,5]
        elif pracChoiceResp.keys == 'v' and loc == 2:
            extraITI = 4-pracChoiceResp.rt
            outcome = alternative
            ocLoc = [-.35,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif pracChoiceResp.keys == 'n' and loc ==1:
            extraITI = 4-pracChoiceResp.rt
            outcome = alternative
            ocLoc = [.35,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif pracChoiceResp.keys == 'n' and loc ==2:
            outcome = random.choice([riskyGain, riskyLoss])
            extraITI = 4-pracChoiceResp.rt
            if outcome == riskyGain:
                ocLoc = [.35,.1]
                ocGambleLoc = [.35,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.35,-.15]
                noRespLoc = [5,5]
            elif outcome == riskyLoss:
                ocLoc = [.35,-.1]
                ocGambleLoc = [.35,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.35,.15]
                noRespLoc = [5,5]

        if outcome == riskyLoss:
            pracFeedbackRounded = "$%.0f" % round(outcome,0)
        else:
            pracFeedbackRounded = "$%.2f" % round(outcome,2)
      End JS Routine:
        psychoJS.experiment.addData('outcome', outcome)
        psychoJS.experiment.addData('extraITI', extraITI)
      End Routine:
        thisExp.addData('outcome', outcome)
    TextComponent pracNoRespText
      color = $color2
      letterHeight = textHeight
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent pracRiskOC
      fillColor = $color2
      lineColor = $color2
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent pracSafeOC
      fillColor = $color2
      lineColor = $color2
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent pracOCtext
      color [set every repeat] = $color1
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $pracFeedbackRounded
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    PolygonComponent pracHideRisk
      fillColor = $color1
      lineColor = $color1
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine pracITI
    TextComponent itiPracFix
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti + extraITI
      text = +
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  Routine staticStart
    TextComponent staticStartText
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Practice complete.

        When you are ready to start ROUND 1 of the task, press "V" or "N".
    KeyboardComponent staticStartResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine staticOutcome
    CodeComponent staticOCcode
      Code Type = Both
      Begin Experiment:
        actualITI = []
        riskygain_values = []
        riskyloss_values = []
        certain_values = []
        choices = []
        outcomes = []
      Begin JS Experiment:
        var actualITI
        choices= []
        outcomes = []
      Begin JS Routine:
        var choicetmp, feedbackRounded, outcometmp, outcomes, choices;


        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }

        if (realChoiceResp.keys === undefined) {
            outcometmp = Math.nan;
            choicetmp = Math.nan;
            noRespLoc = [0, 0];
            ocLoc = [5, 5];
            ocGambleLoc = [5, 5];
            ocSafeLoc = [5, 5];
            hideGamLoc = [5, 5];
            extraITI = 0;
        } else if (realChoiceResp.keys === "v" && realloc === 1) {
             outcometmp = random_item([riskyoption1, riskyoption2]);
             choicetmp = 1;
             extraITI = 4-realChoiceResp.rt
             if (outcometmp === riskyoption1) {
                  ocLoc = [(- 0.35), 0.1];
                  ocGambleLoc = [(- 0.35), 0];
                  ocSafeLoc = [5, 5];
                  noRespLoc = [5, 5];
                  hideGamLoc = [(- 0.35), (- 0.125)];
             } else if (outcometmp === riskyoption2) {
                  ocLoc = [(- 0.35), (- 0.1)];
                  ocGambleLoc = [(- 0.35), 0];
                  ocSafeLoc = [5, 5];
                  hideGamLoc = [(- 0.35), 0.125];
                  noRespLoc = [5, 5];
             }
         } else if (realChoiceResp.keys === "v" && realloc === 2) {
             outcometmp = safeoption;
             choicetmp = 0;
             extraITI = 4-realChoiceResp.rt
             ocLoc = [(- 0.35), 0];
             ocGambleLoc = [5, 5];
             ocSafeLoc = ocLoc;
             hideGamLoc = ocGambleLoc;
             noRespLoc = [5, 5];
         } else if (realChoiceResp.keys === "n" && realloc === 1) {
             outcometmp = safeoption;
             choicetmp = 0;
             extraITI = 4-realChoiceResp.rt
             ocLoc = [0.35, 0];
             ocGambleLoc = [5, 5];
             ocSafeLoc = ocLoc;
             hideGamLoc = ocGambleLoc;
             noRespLoc = [5, 5];
        } else if (realChoiceResp.keys === "n" && realloc === 2) {
            outcometmp = random_item([riskyoption1, riskyoption2]);
            choicetmp = 1;
            extraITI = 4-realChoiceResp.rt
            if (outcometmp === riskyoption1) {
                ocLoc = [0.35, 0.1];
                ocGambleLoc = [0.35, 0];
                ocSafeLoc = [5, 5];
                hideGamLoc = [0.35, (- 0.125)];
                noRespLoc = [5, 5];
            } else if (outcometmp === riskyoption2) {
                ocLoc = [0.35, (- 0.1)];
                ocGambleLoc = [0.35, 0];
                ocSafeLoc = [5, 5];
                hideGamLoc = [0.35, 0.125];
                noRespLoc = [5, 5];
            }
        }

        actualITI = initITIstatic[staticTrials.thisN] + extraITI


        if (outcometmp === riskyoption2) {
            feedbackRounded = "$" + Math.round(outcometmp)
        } else {
            feedbackRounded = "$" + (Math.round(outcometmp*100)/100).toFixed(2)
            //feedbackRounded = "$" + Math.round(outcometmp*100)/100
        }

        /*
        console.log("outcome rounded:",feedbackRounded)
        console.log("gain:",riskyoption1)
        console.log("loss:",riskyoption2)
        console.log("safe:",safeoption)
        console.log("outcome:", outcometmp)
        console.log("choice:", choicetmp)
        console.log("extra iti:", extraITI)
        console.log("rt", realChoice.rt)
        console.log("actualITI", actualITI)
        console.log("init ITI", initITIstatic[staticRDM.thisN])
        */

        psychoJS.experiment.addData("outcomes", outcometmp);
        psychoJS.experiment.addData("choices", choicetmp);
        psychoJS.experiment.addData("extraITI", extraITI);
        psychoJS.experiment.addData("actualITI",actualITI)
        psychoJS.experiment.addData("init ITI", initITIstatic[staticRDM.thisN])
      Begin Routine:
        import random
        import math
        if not realChoiceResp.keys:
            outcometmp = math.nan
            choicetmp = math.nan
            riskyLossReal = math.nan
            riskyGainReal = math.nan
            certain = math.nan
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif realChoiceResp.keys == 'v' and loc == 1:
            outcometmp = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            extraITI = 4-realChoiceResp.rt
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            if outcometmp == riskyoption1:
                ocLoc = [-.35,.1]
                ocGambleLoc = [-.35,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.35,-.15]
            elif outcometmp == riskyoption2:
                 ocLoc = [-.35,-.1]
                 ocGambleLoc = [-.35,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.35,.15]
                 noRespLoc = [5,5]
        elif realChoiceResp.keys == 'v' and loc == 2:
            outcometmp = safeoption
            choicetmp = 0
            extraITI = 4-realChoiceResp.rt
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            ocLoc = [-.35,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoiceResp.keys == 'n' and loc ==1:
            outcometmp = safeoption
            choicetmp = 0
            extraITI = 4-realChoiceResp.rt
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            ocLoc = [.35,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoiceResp.keys == 'n' and loc ==2:
            outcometmp = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            extraITI = 4-realChoiceResp.rt
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            if outcometmp == riskyoption1:
                ocLoc = [.35,.1]
                ocGambleLoc = [.35,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.35,-.15]
                noRespLoc = [5,5]
            elif outcometmp == riskyoption2:
                ocLoc = [.35,-.1]
                ocGambleLoc = [.35,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.35,.15]
                noRespLoc = [5,5]

        actualITI = initITIstatic[staticTrials.thisN] + extraITI

        if outcometmp == riskyoption2:
            feedbackRounded = "$%.0f" % round(outcometmp,0)
        else:
            feedbackRounded = "$%.2f" % round(outcometmp,2)

        outcomes.append(outcometmp)
        choices.append(choicetmp)
        riskyloss_values.append(riskyLossReal)
        riskygain_values.append(riskyGainReal)
        certain_values.append(certain)
      End JS Routine:
        outcomes.push(outcometmp);
        choices.push(choicetmp);
        //riskyloss_values.push(riskyLossReal);
        //riskygain_values.push(riskyGainReal);
        //certain_values.push(certain);
      End Routine:
        thisExp.addData('outcomes', outcometmp)
        thisExp.addData('choices', choicetmp)
    TextComponent staticNoRespText
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = 0.08
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent staticRiskOC
      fillColor = $[-0.0667,0.6392,1.0000]
      lineColor = $[-0.0667,0.6392,1.0000]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent staticSafeOC
      fillColor = $[-0.0667,0.6392,1.0000]
      lineColor = $[-0.0667,0.6392,1.0000]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent staticOCtext
      color [set every repeat] = $[0.5216,0.5216,0.5216]
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedbackRounded
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    PolygonComponent staticHideRisk
      fillColor = $[0.5216,0.5216,0.5216]
      lineColor = $[0.5216,0.5216,0.5216]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine computeBestFit
    CodeComponent gridSearchCode
      Code Type = Both
      Begin Experiment:
        import math

        ### Function Definitions

        def choice_probability(parameters, riskyGv, riskyLv, certv):
            # Pull out parameters
            rho = parameters[0];
            mu = parameters[1];

            nTrials = len(riskyGv);

            # Calculate utility of the two options
            utility_riskygain_value = [math.pow(value, rho) for value in riskyGv];
            utility_riskyloss_value = [math.pow(value, rho) for value in riskyLv];
            utility_risky_option = [.5 * utility_riskygain_value[t] + .5 * utility_riskyloss_value[t] for t in range(nTrials)];
            utility_safe_option = [math.pow(value, rho) for value in certv]

            # Normalize values with div
            div = max(riskyGv)**rho;

            # Softmax
            p = [1/(1 + math.exp(-mu/div*(utility_risky_option[t] - utility_safe_option[t]))) for t in range(nTrials)];
            return p

        def negLLprospect_cgt(parameters, riskyGv, riskyLv, certv, choices):
            choiceP = choice_probability(parameters, riskyGv, riskyLv, certv);

            nTrials = len(choiceP);

            likelihood = [choices[t]*choiceP[t] + (1-choices[t])*(1-choiceP[t]) for t in range(nTrials)];
            zeroindex = [likelihood[t] == 0 for t in range(nTrials)];
            for ind in range(nTrials):
                if zeroindex[ind]:
                    likelihood[ind] = 0.000000000000001;

            loglikelihood = [math.log(likelihood[t]) for t in range(nTrials)];

            nll = -sum(loglikelihood);
            return nll

        fname =[];
      Begin JS Routine:
        // Access the data from previous RDM task and save only the trials where participant responded on time
        var pulledData, finiteChoices, finiteGainVals, finiteSafeVals, finiteLossVals

        pulledData = psychoJS.experiment._trialsData
        //console.log("pulled data:", pulledData)
        finiteData = pulledData.filter((trial) => (trial['realChoice.keys'] =='v' || trial['realChoice.keys'] =='n'));
        //console.log("finite data:", finiteData)
        finiteChoices = finiteData.map((trial) => trial['choices']);
        finiteGainVals = finiteData.map((trial) => trial['riskyoption1']);
        finiteLossVals = finiteData.map((trial) => trial['riskyoption2']);
        finiteSafeVals = finiteData.map((trial) => trial['safeoption']);

        /*
        console.log("finite choices:", finiteChoices)
        console.log("finite gain values:", finiteGainVals)
        console.log("finite loss values:", finiteLossVals)
        console.log("finite safe values:",finiteSafeVals)
        */

        // Function Definitions
        var fname, dynamicChoiceSetFilename;

        function choice_probability(parameters, riskyGv, riskyLv, certv) {
          var rho, mu, nTrials, div, utility_risky_option, utility_safe_option, p

          rho = parameters[0];
          mu = parameters[1];

          nTrials = riskyGv.length;

          div = Math.max.apply(Math,riskyGv) ** rho;

          //utility_risky_option = [];
          //utility_safe_option = [];
          p = Array()

          for (let i = 0; i < nTrials; i++){
            utility_risky_option = 0.5 * Math.pow(riskyGv[i],rho) + 0.5 * Math.pow(riskyLv[i],rho);
            utility_safe_option = Math.pow(certv[i],rho);

            //console.log(utility_risky_option)
            //console.log(utility_safe_option)

            p[i] = 1/(1 + Math.exp(-mu/div*(utility_risky_option - utility_safe_option)))
            //p.push(1/(1 + Math.exp(-mu/div*(utility_risky_option - utility_safe_option))))
          }
          //console.log(p)
          return p
        }


        function negLLprospect_cgt(parameters, riskyGv, riskyLv, certv, choices, likelihood, negloglikelihood) {

          var choiceProb, nTrials, nll, likelihood, negloglikelihood

          choiceProb = choice_probability(parameters, riskyGv, riskyLv, certv);
          //console.log("choiceprob:", choiceProb)

          nTrials = riskyGv.length;

          likelihood = Array()
          negloglikelihood = Array()

          for (let t = 0; t < nTrials; t++){
            likelihood[t] = choices[t]*choiceProb[t] + (1-choices[t])*(1-choiceProb[t]);
            if (likelihood[t] == 0){
              likelihood[t] = 0.000000000000001;
            }
            negloglikelihood[t] = -Math.log(likelihood[t]);
          }

          nll = negloglikelihood.reduce((partialSum, a) => partialSum + a, 0);

          return nll
        }

        // Grid Search Code

        var bestM, bestR, best_nll_value, mmax, mmin, mstep, mu_values, n_mu_values, n_rho_values, nll_new, rho_values, rmax, rmin, rstep;

        n_rho_values = 200;
        n_mu_values = 201;

        //console.log('n_rho_values', n_rho_values)
        //console.log('n_mu_values', n_mu_values)

        rmin = 0.3
        rmax = 2.2
        rstep = (rmax - rmin)/(n_rho_values-1)

        /*
        console.log('rmin', rmin)
        console.log('rmax', rmax)
        console.log('rstep', rstep)
        */

        mmin = 7
        mmax = 80
        mstep = (mmax - mmin)/(n_mu_values-1)

        /*
        console.log('mmin', mmin)
        console.log('mmax', mmax)
        console.log('mstep', mstep)
        */

        rho_values = Array()
        mu_values = Array()

        for (let r = 0; r < n_rho_values; r++){
          rho_values[r] = [rmin + r*rstep]; // creates the rho values
        }

        for (let m = 0; m < n_mu_values; m++){
          mu_values[m] = [mmin + m*mstep]; // creates the mu values
        }

        best_nll_value = 1e10; // a preposterously bad first nll

        for (let r = 0; r < n_rho_values; r++){
          for (let m = 0; m < n_mu_values; m++){
            nll_new = negLLprospect_cgt([rho_values[r], mu_values[m]], finiteGainVals, finiteLossVals, finiteSafeVals, finiteChoices);
            if (nll_new < best_nll_value) {
              best_nll_value = nll_new;
              bestR = r + 1; // +1 corrects for diff. in javascript vs. R indexing
              bestM = m + 1; // +1 corrects for diff. in javascript vs. R indexing
            }
          }
        }

        // print indices of best-fitting parameter values + NLL
        //console.log("The best R index is",bestR,"while the best M index is",bestM,", with an NLL of",best_nll_value)

        var str_bestR, str_bestM
        // Format the indices for good printing to filename
        str_bestR = String(bestR);
        if(str_bestR.length == 1){
          str_bestR = "00" + str_bestR;
        } else if (str_bestR.length == 2) {
          str_bestR = "0" + str_bestR;
        }

        str_bestM = String(bestM);
        if(str_bestM.length == 1){
          str_bestM = "00" + str_bestM;
        } else if (str_bestM.length == 2) {
          str_bestM = "0" + str_bestM;
        }

        // The file name to use in part 2
        fname = "bespoke_choiceset_rhoInd" + str_bestR + "_muInd" + str_bestM + ".csv";
        dynamicChoiceSetFilepath = "bespoke_choicesets/" + fname
        //console.log("dynamic choiceset:", dynamicChoiceSetFilepath)

        // save information
        psychoJS.experiment.addData("dynamicChoiceSetName", fname);
        psychoJS.experiment.addData("dynamicChoiceSetPath", dynamicChoiceSetFilepath);
        psychoJS.experiment.addData("bestRho",bestR)
        psychoJS.experiment.addData("bestMu", bestM)
      Begin Routine:
        ### Grid Search Code
        import math

        # Prepare choice set values to remove any nans
        finiteChoices = []
        finiteGainVals = []
        finiteSafeVals = []
        finiteLossVals = []

        # just save trial things where participant responded
        for t in range(len(choices)):
            if math.isfinite(choices[t]):
                finiteChoices.append(choices[t])
                finiteGainVals.append(riskygain_values[t])
                finiteSafeVals.append(certain_values[t])
                finiteLossVals.append(riskyloss_values[t])


        # Prepare rho & mu values
        n_rho_values = 200;
        n_mu_values = 201;

        rmin = 0.3
        rmax = 2.2
        rstep = (rmax - rmin)/(n_rho_values-1)

        mmin = 7
        mmax = 80
        mstep = (mmax - mmin)/(n_mu_values-1)

        rho_values = [];
        mu_values = [];

        for r in range(n_rho_values):
            rho_values += [rmin + r*rstep];

        for m in range(n_mu_values):
            mu_values += [mmin + m*mstep];

        # Execute the grid search
        best_nll_value = 1e10; # a preposterously bad first NLL

        for r in range(n_rho_values):
            for m in range(n_mu_values):
                nll_new = negLLprospect_cgt([rho_values[r], mu_values[m]], finiteGainVals, finiteLossVals, finiteSafeVals, finiteChoices);
                if nll_new < best_nll_value:
                    best_nll_value = nll_new;
                    bestR = r + 1; # "+1" corrects for diff. in python vs. R indexing
                    bestM = m + 1; # "+1" corrects for diff. in python vs. R indexing

        print('The best R index is', bestR, 'while the best M index is', bestM, ', with an NLL of', best_nll_value);

        fname.append("../CGE/bespoke_choicesets/bespoke_choiceset_rhoInd%03i_muInd%03i.csv" % (bestR, bestM))
        dynamicChoiceSetFilename = fname[0]
    VariableComponent dynamicChoiceSet
      saveStartRoutine = True
      startRoutineValue = fname[0]
      startVal [time (s)] = 1
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    VariableComponent bestRho
      startRoutineValue = bestR
      startVal [time (s)] = 1
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    VariableComponent bestMu
      startRoutineValue = bestM
      startVal [time (s)] = 1
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    TextComponent setupBestFit
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      wrapWidth = wrap
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      text:
        ROUND 1 of the gambling task is complete!

        Setting up for the last round of the gambling task.

        Please wait...
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  Routine dynamicStart
    TextComponent dynamicStartText
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      text = When you are ready to start ROUND 2 of the task, press "V" or "N".
      wrapWidth = wrap
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    KeyboardComponent dynamicStartResp
      allowedKeys = 'v', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dynamicOutcome
    CodeComponent dynamicOCcode
      Code Type = Both
      Begin Experiment:
        riskygain_values = []
        riskyloss_values = []
        certain_values = []
        choices = []
        outcomes = []
      Begin JS Experiment:
        choices= []
        outcomes = []
      Begin JS Routine:
        var choicetmp, feedbackRounded, outcometmp, outcomes, choices;


        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }

        if (realChoiceResp.keys === undefined) {
            outcometmp = Math.nan;
            choicetmp = Math.nan;
            noRespLoc = [0, 0];
            ocLoc = [5, 5];
            ocGambleLoc = [5, 5];
            ocSafeLoc = [5, 5];
            hideGamLoc = [5, 5];
            extraITI = 0;
        } else if (realChoiceResp.keys === "v" && realloc === 1) {
             outcometmp = random_item([riskyoption1, riskyoption2]);
             choicetmp = 1;
             extraITI = 4-realChoiceResp.rt
             if (outcometmp === riskyoption1) {
                  ocLoc = [(- 0.35), 0.1];
                  ocGambleLoc = [(- 0.35), 0];
                  ocSafeLoc = [5, 5];
                  noRespLoc = [5, 5];
                  hideGamLoc = [(- 0.35), (- 0.125)];
             } else if (outcometmp === riskyoption2) {
                  ocLoc = [(- 0.35), (- 0.1)];
                  ocGambleLoc = [(- 0.35), 0];
                  ocSafeLoc = [5, 5];
                  hideGamLoc = [(- 0.35), 0.125];
                  noRespLoc = [5, 5];
             }
         } else if (realChoiceResp.keys === "v" && realloc === 2) {
             outcometmp = safeoption;
             choicetmp = 0;
             extraITI = 4-realChoice.rt
             ocLoc = [(- 0.35), 0];
             ocGambleLoc = [5, 5];
             ocSafeLoc = ocLoc;
             hideGamLoc = ocGambleLoc;
             noRespLoc = [5, 5];
         } else if (realChoiceResp.keys === "n" && realloc === 1) {
             outcometmp = safeoption;
             choicetmp = 0;
             extraITI = 4-realChoiceResp.rt
             ocLoc = [0.35, 0];
             ocGambleLoc = [5, 5];
             ocSafeLoc = ocLoc;
             hideGamLoc = ocGambleLoc;
             noRespLoc = [5, 5];
        } else if (realChoiceResp.keys === "n" && realloc === 2) {
            outcometmp = random_item([riskyoption1, riskyoption2]);
            choicetmp = 1;
            extraITI = 4-realChoiceResp.rt
            if (outcometmp === riskyoption1) {
                ocLoc = [0.35, 0.1];
                ocGambleLoc = [0.35, 0];
                ocSafeLoc = [5, 5];
                hideGamLoc = [0.35, (- 0.125)];
                noRespLoc = [5, 5];
            } else if (outcometmp === riskyoption2) {
                ocLoc = [0.35, (- 0.1)];
                ocGambleLoc = [0.35, 0];
                ocSafeLoc = [5, 5];
                hideGamLoc = [0.35, 0.125];
                noRespLoc = [5, 5];
            }
        }

        actualITI = initITIdynamic[dynamicTrials.thisN] + extraITI


        if (outcometmp === riskyoption2) {
            feedbackRounded = "$" + Math.round(outcometmp)
        } else {
            feedbackRounded = "$" + (Math.round(outcometmp*100)/100).toFixed(2)
            //feedbackRounded = "$" + Math.round(outcometmp*100)/100
        }

        /*
        console.log("gain:",riskyoption1)
        console.log("loss:",riskyoption2)
        console.log("safe:",safeoption)
        console.log("outcome:", outcometmp)
        console.log("choice:", choicetmp)
        console.log("extra iti:", extraITI)
        console.log("rt", realChoice.rt)
        console.log("actualITI", actualITI)
        console.log("init ITI", initITIdynamic[dynamicRDM.thisN])
        */


        psychoJS.experiment.addData("outcomes", outcometmp);
        psychoJS.experiment.addData("choices", choicetmp);
        psychoJS.experiment.addData("extraITI", extraITI);
        psychoJS.experiment.addData("actualITI",actualITI)
        psychoJS.experiment.addData("init ITI", initITIdynamic[dynamicRDM.thisN])
      Begin Routine:
        import random
        import math
        if not realChoiceResp.keys:
            outcometmp = math.nan
            choicetmp = math.nan
            riskyLossReal = math.nan
            riskyGainReal = math.nan
            certain = math.nan
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif realChoiceResp.keys == 'v' and loc == 1:
            outcometmp = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            extraITI = 4-realChoiceResp.rt
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            if outcometmp == riskyoption1:
                ocLoc = [-.35,.1]
                ocGambleLoc = [-.35,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.35,-.15]
            elif outcometmp == riskyoption2:
                 ocLoc = [-.35,-.1]
                 ocGambleLoc = [-.35,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.35,.15]
                 noRespLoc = [5,5]
        elif realChoiceResp.keys == 'v' and loc == 2:
            outcometmp = safeoption
            choicetmp = 0
            extraITI = 4-realChoiceResp.rt
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            ocLoc = [-.35,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoiceResp.keys == 'n' and loc ==1:
            outcometmp = safeoption
            choicetmp = 0
            extraITI = 4-realChoiceResp.rt
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            ocLoc = [.35,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoiceResp.keys == 'n' and loc ==2:
            outcometmp = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            extraITI = 4-realChoiceResp.rt
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            if outcometmp == riskyoption1:
                ocLoc = [.35,.1]
                ocGambleLoc = [.35,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.35,-.15]
                noRespLoc = [5,5]
            elif outcometmp == riskyoption2:
                ocLoc = [.35,-.1]
                ocGambleLoc = [.35,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.35,.15]
                noRespLoc = [5,5]

        actualITI = initITIdynamic[dynamicTrials.thisN] + extraITI

        if outcometmp == riskyoption2:
            feedbackRounded = "$%.0f" % round(outcometmp,0)
        else:
            feedbackRounded = "$%.2f" % round(outcometmp,2)

        outcomes.append(outcometmp)
        choices.append(choicetmp)
        riskyloss_values.append(riskyLossReal)
        riskygain_values.append(riskyGainReal)
        certain_values.append(certain)
      End JS Routine:
        outcomes.push(outcometmp);
        choices.push(choicetmp);
        //riskyloss_values.push(riskyLossReal);
        //riskygain_values.push(riskyGainReal);
        //certain_values.push(certain);
      End Routine:
        thisExp.addData('outcomes', outcometmp)
        thisExp.addData('choices', choicetmp)
    TextComponent dynamicNoRespText
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = 0.08
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent dynamicRiskOC
      fillColor = $[-0.0667,0.6392,1.0000]
      lineColor = $[-0.0667,0.6392,1.0000]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent dynamicSafeOC
      fillColor = $[-0.0667,0.6392,1.0000]
      lineColor = $[-0.0667,0.6392,1.0000]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent dynamicOCtext
      color [set every repeat] = $[0.5216,0.5216,0.5216]
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedbackRounded
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    PolygonComponent dynamicHideRisk
      fillColor = $[0.5216,0.5216,0.5216]
      lineColor = $[0.5216,0.5216,0.5216]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine SetUp
    CodeComponent setupCode
      Code Type = Both
      Before JS Experiment:
        psychoJS.start({
          expName,
          expInfo,
          resources: [
            // relative path to index.html
            { name: 'digitSpanTrialNumber.xlsx', path: 'digitSpanTrialNumber.xlsx' },
            { name: 'CGT-choice-set.csv', path: 'CGT-choice-set.csv' },
            { name: 'cgtRDMPractice.xlsx', path: 'cgtRDMPractice.xlsx' },
            { name: 'continue.png', path: 'continue.png' },
            { name: 'digitSpanPractice.xlsx', path: 'digitSpanPractice.xlsx' },
            // absolute path:
            //{ name: 'trialTypes_B.xls', path: 'http://a.website.org/a.path/trialTypes_B.xls' }
          ]
        });
      Begin Experiment:
        instructionsTextHeight = .05
        lettersTextHeight = .1
        wrap = 1.5

        initITIstatic = []
        initITIdynamic = []

        # Isoluminant Colors Used
        color1 = [0.5216,0.5216,0.5216]
        color2 = [-0.0667,0.6392,1]
        # BLUE ### Choice Shape; V, N, and OR text
        # PsychoPy RGB -1:1 [-0.0667,0.6392,1] # RGB 0:255 [119,209,205]
        # GREY ### Background; Choice Line
        # psychopy RGB -1:1 [0.5216,0.5216,0.5216] # RGB 0:255 [194,194,194]

        ### Fixed Practice Trial Locations
        circLeftLoc=[-.35,0]
        circRightLoc=[.35,0]
        ORtextLoc=[0,0]
        VleftLoc=[-.35,-.35]
        NrightLoc=[.35,-.35]
      Begin JS Experiment:
        instructionsTextHeight = 0.05;
        lettersTextHeight = 0.1;
        wrap = 1.5;

        var initITIstatic
        var initITIdynamic
      End JS Routine:
        function shuffle(array) {
          let currentIndex = array.length,  randomIndex;

          // While there remain elements to shuffle.
          while (currentIndex != 0) {

            // Pick a remaining element.
            randomIndex = Math.floor(Math.random() * currentIndex);
            currentIndex--;

            // And swap it with the current element.
            [array[currentIndex], array[randomIndex]] = [
              array[randomIndex], array[currentIndex]];
          }

          return array;
        }

        // initialize ITIs
        initITIstatic = Array(25).fill([1, 1.5]).flat();
        initITIdynamic = Array(60).fill([1, 1.5]).flat();

        // shuffle the ITIs using the function above
        initITIstatic = shuffle(initITIstatic);
        initITIdynamic = shuffle(initITIdynamic);

        // save the ITIs
        psychoJS.experiment.addData('initITIstatic', initITIstatic)
        psychoJS.experiment.addData('initITIdynamic', initITIdynamic)
      End Routine:
        # Getting random module
        import random

        # Define the shuffle function (equivalent to the JavaScript version)
        def shuffle(array):
            currentIndex = len(array)
            while currentIndex != 0:
                randomIndex = random.randint(0, currentIndex - 1)
                currentIndex -= 1
                array[currentIndex], array[randomIndex] = array[randomIndex], array[currentIndex]

        # Initialize ITIs
        initITIstatic = [1, 1.5] * 25
        initITIdynamic = [1, 1.5] * 60

        # Shuffle the ITIs using the shuffle function
        shuffle(initITIstatic)
        shuffle(initITIdynamic)

        # Save the ITIs as experiment data
        thisExp.addData('initITIstatic', initITIstatic)
        thisExp.addData('initITIdynamic', initITIdynamic)
  Routine cgeRDMend
    TextComponent cgeRDMendText
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        You have sucessfully completed the first task in this experiment!

        Please take a brief 1 minute break.

        You are welcome to take a longer break, but keep in mind this study should take no longer than 1 hour to complete.

        When you are ready to move on, press 'enter' to continue.
    KeyboardComponent cgeRDMendResp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loadingDynamicChoices
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ResourceManagerComponent loadDynamicChoices
      actionType = Start and Check
      checkAll = True
      forceEndRoutine = False
      resources = ['$fname[0]']
      startVal [time (s)] = 2
  Routine realISI
    TextComponent isiFix
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine realITI
    TextComponent itiFix
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $actualITI
      text = +
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  Routine realChoice
    CodeComponent realChoiceRandLoc
      Code Type = Both
      Begin Experiment:
        loc = [];
      Begin JS Experiment:
        var realloc
      Begin JS Routine:
        var gainLoc, gainRounded, lossLoc, lossRounded, safeLoc, safeRounded, targetPos;

        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }

        realloc = random_item([1, 2]);

        if ((realloc === 1)) {
            targetPos = [(- 0.35), 0];
        } else {
            targetPos = [0.35, 0];
        }
        if ((realloc === 1)) {
            lossLoc = [(- 0.35), (- 0.1)];
            gainLoc = [(- 0.35), 0.1];
            safeLoc = [0.35, 0];
        } else {
            lossLoc = [0.35, (- 0.1)];
            gainLoc = [0.35, 0.1];
            safeLoc = [(- 0.35), 0];
        }

        //console.log(realloc)

        /*
         function roundToTwo(num) {
                return +(Math.round(num + "e+2")  + "e-2");
         }
        */

        lossRounded = `$${Math.round(riskyoption2)}`;
        gainRounded = `$${(Math.round(riskyoption1*100)/100).toFixed(2)}`;
        safeRounded = `$${(Math.round(safeoption*100)/100).toFixed(2)}`;

        //lossRounded = `$${Math.round(riskyoption2)}`;
        //gainRounded = `$${Math.round(riskyoption1*100)/100}`;
        //safeRounded = `$${Math.round(safeoption*100)/100}`;
      Begin Routine:
        import random

        loc = random.choice([1,2])

        if loc==1:
            riskLineLoc=[-.35,0]
        else:
            riskLineLoc=[.35,0]

        if loc==1:
            lossLoc=[-.35,-.1]
            gainLoc=[-.35,.1]
            safeLoc=[.35,0]
        else:
            lossLoc=[.35,-.1]
            gainLoc=[.35,.1]
            safeLoc=[-.35,0]

        lossRounded = "$%.0f" % round(riskyoption2,0)
        gainRounded = "$%.2f" % round(riskyoption1,2)
        safeRounded = "$%.2f" % round(safeoption,2)

        #lossRounded = ("$" + str(round(riskyoption2, 2)))
        #gainRounded = ("$" + str(round(riskyoption1, 2)))
        #safeRounded = ("$" + str(round(safeoption, 2)))
      End JS Routine:
        psychoJS.experiment.addData("realloc", realloc);
      End Routine:
        thisExp.addData("loc", loc)
    PolygonComponent realCircLeft
      fillColor = $[-0.0667,0.6392,1.0000]
      lineColor = $[-0.0667,0.6392,1.0000]
      nVertices = 130
      pos = circLeftLoc
      shape = rectangle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent realCircRight
      fillColor [set every repeat] = $[-0.0667,0.6392,1.0000]
      lineColor [set every repeat] = $[-0.0667,0.6392,1.0000]
      nVertices = 130
      pos = circRightLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent realRiskLine
      fillColor = $[0.5216,0.5216,0.5216]
      lineColor = $[0.5216,0.5216,0.5216]
      lineWidth = 3
      pos [set every repeat] = riskLineLoc
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent realORtext
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = 0.05
      pos = ORtextLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent realLossText
      color = $[0.5216,0.5216,0.5216]
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $lossRounded
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    TextComponent realGainText
      color = $[0.5216,0.5216,0.5216]
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $gainRounded
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    TextComponent realSafeText
      color = $[0.5216,0.5216,0.5216]
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $safeRounded
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    TextComponent realVleft
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = 0.05
      pos = VleftLoc
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = V-Left
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    TextComponent realNright
      color = $[-0.0667,0.6392,1.0000]
      letterHeight = 0.05
      pos = NrightLoc
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = N-Right
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    KeyboardComponent realChoiceResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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  Routine cgeRDMstart
    TextComponent CGErdmStartText
      color = $color2
      letterHeight = .05
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        As discussed in the instructions, you will choose between a gamble and a guaranteed alternative.

        You may press "V" to select the option on the left and "N" to select the option on the right.

        Press "enter" to move on to the next screen.
    KeyboardComponent CGErdmStartResp
      allowedKeys = "return"
      forceEndRoutine = True
      startVal [time (s)] = 2
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Flow
  Routine SetUp
  Routine cgeRDMstart
  Routine pracStart
  LoopInitiator pracTrials loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = cgtRDMPractice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'riskyGain': 18.23, 'riskyLoss': 0, 'alternative': 9.45, 'isi': 2, 'iti': 1, 'loc': 1},
      {'riskyGain': 53.27, 'riskyLoss': 0, 'alternative': 35.16, 'isi': 1, 'iti': 3, 'loc': 1},
      {'riskyGain': 8.27, 'riskyLoss': 0, 'alternative': 1.15, 'isi': 1, 'iti': 2, 'loc': 2},
      {'riskyGain': 45.88, 'riskyLoss': 0, 'alternative': 40.41, 'isi': 3, 'iti': 1, 'loc': 1},
      {'riskyGain': 21.56, 'riskyLoss': 0, 'alternative': 11.96, 'isi': 1, 'iti': 1, 'loc': 2}]
    Routine pracChoice
    Routine pracISI
    Routine pracOutcome
    Routine pracITI
  LoopTerminator pracTrials
  Routine staticStart
  LoopInitiator staticTrials loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = CGT-choice-set.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('riskyoption1', 20.03), ('riskyoption2', 0.0), ('safeoption', 1.99), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 28.21), ('riskyoption2', 0.0), ('safeoption', 3.89), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 17.73), ('riskyoption2', 0.0), ('safeoption', 3.13), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 25.2), ('riskyoption2', 0.0), ('safeoption', 5.4), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 16.0), ('riskyoption2', 0.0), ('safeoption', 4.0), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 22.97), ('riskyoption2', 0.0), ('safeoption', 6.51), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 14.72), ('riskyoption2', 0.0), ('safeoption', 4.64), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 21.32), ('riskyoption2', 0.0), ('safeoption', 7.34), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.94), ('riskyoption2', 0.0), ('safeoption', 5.03), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 20.53), ('riskyoption2', 0.0), ('safeoption', 7.73), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.45), ('riskyoption2', 0.0), ('safeoption', 5.27), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 19.86), ('riskyoption2', 0.0), ('safeoption', 8.07), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.04), ('riskyoption2', 0.0), ('safeoption', 5.48), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 19.28), ('riskyoption2', 0.0), ('safeoption', 8.36), ('ischecktrial', 0)])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
    Routine realChoice
    Routine realISI
    Routine staticOutcome
    Routine realITI
  LoopTerminator staticTrials
  LoopInitiator BestFit loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine computeBestFit
  LoopTerminator BestFit
  Routine loadingDynamicChoices
  Routine dynamicStart
  LoopInitiator dynamicTrials loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = $fname[0]
    loopType = random
    nReps = 1
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    Routine realChoice
    Routine realISI
    Routine dynamicOutcome
    Routine realITI
  LoopTerminator dynamicTrials
  Routine cgeRDMend
  Routine END
