PsychoPy2experiment version="2022.2.4"
Settings
  Completed URL = www.sokolhessnerlab.com
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Incomplete URL = www.google.com
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = CGTriskyDMtask
  keyboardBackend = ioHub
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Routines
  Routine instructions
    ResourceManagerComponent predeterminedResources
      actionType = Start and Check
      checkAll = True
      forceEndRoutine = False
      resources = ['digitSpanPractice.xlsx', 'continue.png', 'cgtRDMPractice.xlsx', 'CGT-choice-set.csv', 'digitSpanTrialNumber.xlsx']
      startVal [time (s)] = 0
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        instructionsTextHeight = 0.04;
        letterTextHeight = 0.1;
        wrap = 1.6
    TextComponent Instructions
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        As discussed in the instructions, you will choose between a gamble and a guaranteed alternative.

        Once "V-Left" and "N-Right" appear on the screen, you may press "V" to select the option on the left and "N" to choose the option on the right.

        Press "enter" to move on to the next screen.
    KeyboardComponent inst1
      allowedKeys = "return"
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine practiceTask
    CodeComponent randLoc
      Code Type = Auto->JS
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      Begin Experiment:
        textHeight = 0.05;
      Begin Routine:
        if loc==1:
            targetPos=[-.4,0]
        else:
            targetPos=[.4,0]

        if loc==1:
            lossLoc=[-.4,-.1]
            gainLoc=[-.4,.1]
            safeLoc=[.4,0]
        else:
            lossLoc=[.4,-.1]
            gainLoc=[.4,.1]
            safeLoc=[-.4,0]


        pracLossRounded = '$%.0f' % round(riskyLoss,0)
        pracGainRounded = '$%.2f' % round(riskyGain,2)
        pracSafeRounded = '$%.2f' % round(alternative,2)
    PolygonComponent circleLeft
      fillColor = $[1,1,1]
      nVertices = 130
      pos = (-.4,0)
      shape = rectangle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent circleRight
      fillColor [set every repeat] = $[1,1,1]
      lineColor [set every repeat] = $[1,1,1]
      nVertices = 130
      pos = (.4,0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent lineLeft
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      pos [set every repeat] = targetPos
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent orText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent lossTxt
      color = black
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $pracLossRounded
    TextComponent gainTxt
      color = black
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $pracGainRounded
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    TextComponent safeTxt
      color = black
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $pracSafeRounded
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    TextComponent vLeft
      letterHeight = 0.05
      pos = (-.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = V-Left
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    TextComponent nRight
      letterHeight = 0.05
      pos = (.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = N-Right
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    KeyboardComponent choice1
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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  Routine pracStart
    TextComponent startPract
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        There will now be 5 practice trials.

        When you are ready to begin the practice, press "V" or "N".
    KeyboardComponent startPracResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine isiPrac
    TextComponent isiText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
      text = +
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  Routine feedback
    CodeComponent codeFeedback
      Code Type = Both
      Begin JS Routine:
        function random_item(items){ return items[Math.floor(Math.random()*items.length)];
        }

        if (choice1.keys != 'n' || choice1.keys !='v'){
            outcome = " ";
            noRespLoc = [0,0];
            ocLoc = [5,5];
            ocGambleLoc = [5,5];
            ocSafeLoc = [5,5];
            hideGamLoc = [5,5];
        }else if(choice1.keys =='v' && loc ==1) {
            outcome = random_items([riskyGain, riskyLoss])
            if(outcome == riskyGain){
                ocLoc = [-.4,.1];
                ocGambleLoc = [-.4,0];
                ocSafeLoc = [5,5];
                noRespLoc = [5,5];
                hideGamLoc = [-.4,-.125];
            } else if (outcome ==riskyLoss){
                ocLoc = [-.4,-.1];
                ocGambleLoc = [-.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [-.4,.125];
                noRespLoc = [5,5];
            }
        } else if(choice1.keys == 'v' && loc ==2){
            outcome = alternative
            ocLoc = [-.4,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (choice1.keys=='n' && loc ==1){
            outcome = alternative
            ocLoc = [.4,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (choice1.keys =='n' && loc ==2){
            outcome = random_items([riskyGain, riskyLoss]);
            if (outcome == riskyGain){
                ocLoc = [.4,.1];
                ocGambleLoc = [.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.4,-.125];
                noRespLoc = [5,5];
            } else if (outcome == riskyLoss){
                ocLoc = [.4,-.1];
                ocGambleLoc = [.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.4,.125];
                noRespLoc = [5,5];
            }
        }
      Begin Routine:
        import random
        if not choice1.keys:
            outcome = " "
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif choice1.keys == 'v' and loc == 1:
            outcome = random.choice([riskyGain, riskyLoss])
            if outcome == riskyGain:
                ocLoc = [-.4,.1]
                ocGambleLoc = [-.4,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.4,-.125]
            elif outcome == riskyLoss:
                 ocLoc = [-.4,-.1]
                 ocGambleLoc = [-.4,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.4,.125]
                 noRespLoc = [5,5]
        elif choice1.keys == 'v' and loc == 2:
            outcome = alternative
            ocLoc = [-.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif choice1.keys == 'n' and loc ==1:
            outcome = alternative
            ocLoc = [.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif choice1.keys == 'n' and loc ==2:
            outcome = random.choice([riskyGain, riskyLoss])
            if outcome == riskyGain:
                ocLoc = [.4,.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,-.125]
                noRespLoc = [5,5]
            elif outcome == riskyLoss:
                ocLoc = [.4,-.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,.125]
                noRespLoc = [5,5]

        if outcome == riskyLoss:
            pracFeedbackRounded = "$%.0f" % round(outcome,0)
        else:
            pracFeedbackRounded = "$%.2f" % round(outcome,2)
      End JS Routine:
        psychoJS.experiment.addData('outcome', outcome)
      End Routine:
        thisExp.addData('outcome', outcome)
    TextComponent noRespTxt
      letterHeight = textHeight
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent ocGamble
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent ocSafe
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent outcomeText
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $pracFeedbackRounded
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    PolygonComponent hideGamble
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine itiPrac_2
    TextComponent itiText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      text = +
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  Routine showSelectedOutcome
    TextComponent wrapUp
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Randomly selected outcome from trial #

        The outcome on this trial was 555

        You will be paid 111

        When you are ready to exit, press enter.
    KeyboardComponent exitResp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine postPrac
    TextComponent postPracText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Practice complete.

        When you are ready to start the real task, press "V" or "N".
    KeyboardComponent postPractResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine lossInstructions
    TextComponent lossInst
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The next set of 20 trials will be identical to the previous trials, except:

        1) On each trial you will decide between a risky option with win
         and loss possible outcomes, and a guaranteed alternative of \$0.

        2) These will be hypothetical trials, meaning that you
         will not recieve the outcome from any of these trials.

        That said, we ask that you please make your
         choices as if the monetary amounts were real.

        When you are done, you will be redirected
         to the next task in this study.

        When you are ready to start, press "V" or "N".
    KeyboardComponent startLossResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine lossTask
    CodeComponent randLoc_3
      Code Type = Auto->JS
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      Begin Routine:
        if loc==1:
            targetPos=[-.4,0]
        else:
            targetPos=[.4,0]

        if loc==1:
            lossLoc=[-.4,-.1]
            gainLoc=[-.4,.1]
            safeLoc=[.4,0]
        else:
            lossLoc=[.4,-.1]
            gainLoc=[.4,.1]
            safeLoc=[-.4,0]
    PolygonComponent circleLeftReal_2
      fillColor = $[1,1,1]
      nVertices = 130
      pos = (-.4,0)
      shape = rectangle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent circleRightReal_2
      fillColor [set every repeat] = $[1,1,1]
      lineColor [set every repeat] = $[1,1,1]
      nVertices = 130
      pos = (.4,0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent lineLeftReal_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      pos [set every repeat] = targetPos
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent orTextReal_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent lossTxtReal_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $riskyLoss
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    TextComponent gainTxtReal_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $riskyGain
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    TextComponent safeTxtReal_2
      color = black
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $alternative
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    TextComponent vLeftReal_2
      letterHeight = 0.05
      pos = (-.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = V-Left
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    TextComponent nRightReal_2
      letterHeight = 0.05
      pos = (.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = N-Right
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    KeyboardComponent realChoice_2
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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  Routine isiLoss
    TextComponent isiLossText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
      text = +
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  Routine feedbackLoss
    CodeComponent codeFeedbackReal_2
      Code Type = Both
      Begin JS Routine:
        function random_item(items){
        return items[Math.floor(Math.random()*items.length)];
        }

        if (realChoice.keys != 'n' || realChoice.keys !='v'){
            realOutcome = " ";
            noRespLoc = [0,0];
            ocLoc = [5,5];
            ocGambleLoc = [5,5];
            ocSafeLoc = [5,5];
            hideGamLoc = [5,5];
        }else if(realChoice.keys =='v' && loc ==1) {
            realOutcome = random_items([riskyGain, riskyLoss])
            if(realOutcome == riskyGain){
                ocLoc = [-.4,.1];
                ocGambleLoc = [-.4,0];
                ocSafeLoc = [5,5];
                noRespLoc = [5,5];
                hideGamLoc = [-.4,-.125];
            } else if (realOutcome ==riskyLoss){
                ocLoc = [-.4,-.1];
                ocGambleLoc = [-.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [-.4,.125];
                noRespLoc = [5,5];
            }
        } else if(realChoice.keys == 'v' && loc ==2){
            realOutcome = alternative
            ocLoc = [-.4,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (realChoice.keys=='n' && loc ==1){
            realOutcome = alternative
            ocLoc = [.4,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (realChoice.keys =='n' && loc ==2){
            realOutcome = random_items([riskyGain, riskyLoss]);
            if (realOutcome == riskyGain){
                ocLoc = [.4,.1];
                ocGambleLoc = [.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.4,-.125];
                noRespLoc = [5,5];
            } else if (realOutcome == riskyLoss){
                ocLoc = [.4,-.1];
                ocGambleLoc = [.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.4,.125];
                noRespLoc = [5,5];
            }
        }
      Begin Routine:
        import random
        if not realChoice.keys:
            realOutcome = " "
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif realChoice.keys == 'v' and loc == 1:
            realOutcome = random.choice([riskyGain, riskyLoss])
            if realOutcome == riskyGain:
                ocLoc = [-.4,.1]
                ocGambleLoc = [-.4,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.4,-.125]
            elif realOutcome == riskyLoss:
                 ocLoc = [-.4,-.1]
                 ocGambleLoc = [-.4,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.4,.125]
                 noRespLoc = [5,5]
        elif realChoice.keys == 'v' and loc == 2:
            realOutcome = alternative
            ocLoc = [-.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice.keys == 'n' and loc ==1:
            realOutcome = alternative
            ocLoc = [.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice.keys == 'n' and loc ==2:
            realOutcome = random.choice([riskyGain, riskyLoss])
            if realOutcome == riskyGain:
                ocLoc = [.4,.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,-.125]
                noRespLoc = [5,5]
            elif realOutcome == riskyLoss:
                ocLoc = [.4,-.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,.125]
                noRespLoc = [5,5]
      End JS Routine:
        psychoJS.experiment.addData('realOutcome', realOutcome)
      End Routine:
        thisExp.addData('realOutcome', realOutcome)
    TextComponent noRespTxtReal_2
      letterHeight = 0.08
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent ocGambleReal_2
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent ocSafeReal_2
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent outcomeTextReal_2
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $realOutcome
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    PolygonComponent hideGambleReal_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine itiLoss
    TextComponent itiTextReal_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      text = +
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  Routine endOfTask
    TextComponent endRedirect
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This part of the experiment is complete.

        Please click the mouse to move on.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine testVariable
    TextComponent showGain
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $riskyGainAmt
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  Routine computeEstimates
    CodeComponent gridSearchCode
      Code Type = Auto->JS
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      Begin Experiment:
        import math

        ### Function Definitions

        def choice_probability(parameters, riskyGv, riskyLv, certv):
            # Pull out parameters
            rho = parameters[0];
            mu = parameters[1];

            nTrials = len(riskyGv);

            # Calculate utility of the two options
            utility_riskygain_value = [math.pow(value, rho) for value in riskyGv];
            utility_riskyloss_value = [math.pow(value, rho) for value in riskyLv];
            utility_risky_option = [.5 * utility_riskygain_value[t] + .5 * utility_riskyloss_value[t] for t in range(nTrials)];
            utility_safe_option = [math.pow(value, rho) for value in certv]

            # Normalize values with div
            div = max(riskyGv)**rho;

            # Softmax
            p = [1/(1 + math.exp(-mu/div*(utility_risky_option[t] - utility_safe_option[t]))) for t in range(nTrials)];
            return p

        def negLLprospect_cgt(parameters, riskyGv, riskyLv, certv, choices):
            choiceP = choice_probability(parameters, riskyGv, riskyLv, certv);

            nTrials = len(choiceP);

            likelihood = [choices[t]*choiceP[t] + (1-choices[t])*(1-choiceP[t]) for t in range(nTrials)];
            zeroindex = [likelihood[t] == 0 for t in range(nTrials)];
            for ind in range(nTrials):
                if zeroindex[ind]:
                    likelihood[ind] = 0.000000000000001;

            loglikelihood = [math.log(likelihood[t]) for t in range(nTrials)];

            nll = -sum(loglikelihood);
            return nll

        fname =[];
      Begin Routine:
        ### Grid Search Code
        import math

        # Prepare choice set values to remove any nans
        finiteChoices = []
        finiteGainVals = []
        finiteSafeVals = []
        finiteLossVals = []

        # just save trial things where participant responded
        for t in range(len(choices)):
            if math.isfinite(choices[t]):
                finiteChoices.append(choices[t])
                finiteGainVals.append(riskygain_values[t])
                finiteSafeVals.append(certain_values[t])
                finiteLossVals.append(riskyloss_values[t])


        # Prepare rho & mu values
        n_rho_values = 200;
        n_mu_values = 201;

        rmin = 0.3
        rmax = 2.2
        rstep = (rmax - rmin)/(n_rho_values-1)

        mmin = 7
        mmax = 80
        mstep = (mmax - mmin)/(n_mu_values-1)

        rho_values = [];
        mu_values = [];

        for r in range(n_rho_values):
            rho_values += [rmin + r*rstep];

        for m in range(n_mu_values):
            mu_values += [mmin + m*mstep];

        # Execute the grid search
        best_nll_value = 1e10; # a preposterously bad first NLL

        for r in range(n_rho_values):
            for m in range(n_mu_values):
                nll_new = negLLprospect_cgt([rho_values[r], mu_values[m]], finiteGainVals, finiteLossVals, finiteSafeVals, finiteChoices);
                if nll_new < best_nll_value:
                    best_nll_value = nll_new;
                    bestR = r + 1; # "+1" corrects for diff. in python vs. R indexing
                    bestM = m + 1; # "+1" corrects for diff. in python vs. R indexing

        print('The best R index is', bestR, 'while the best M index is', bestM, ', with an NLL of', best_nll_value);

        fname.append("../tasks_RDM_digitSpan/bespoke_choicesets/bespoke_choiceset_rhoInd%03i_muInd%03i.csv" % (bestR, bestM))
    VariableComponent dynamicChoiceSet
      saveStartRoutine = True
      startRoutineValue = fname[0]
      startVal [time (s)] = 1
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    VariableComponent bestRho
      startRoutineValue = bestR
      startVal [time (s)] = 1
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    VariableComponent bestMu
      startRoutineValue = bestM
      startVal [time (s)] = 1
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    TextComponent settingUpForPart2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      wrapWidth = wrap
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      text:
        The first round of the gambling task is complete!

        Setting up for the last round of the gambling task.

        Please wait...
  Routine realTaskDynamic
    CodeComponent randLoc_dynamic
      Code Type = Auto->JS
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      Begin Experiment:
        loc = [];
      Begin Routine:
        import random

        loc = random.choice([1,2])

        if loc==1:
            targetPos=[-.4,0]
        else:
            targetPos=[.4,0]

        if loc==1:
            lossLoc=[-.4,-.1]
            gainLoc=[-.4,.1]
            safeLoc=[.4,0]
        else:
            lossLoc=[.4,-.1]
            gainLoc=[.4,.1]
            safeLoc=[-.4,0]
      End Routine:
        thisExp.addData("loc", loc)
    PolygonComponent circleLeftReal_dynamic
      fillColor = $[1,1,1]
      nVertices = 130
      pos = (-.4,0)
      shape = rectangle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent circleRightReal_dynamic
      fillColor [set every repeat] = $[1,1,1]
      lineColor [set every repeat] = $[1,1,1]
      nVertices = 130
      pos = (.4,0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent lineLeftReal_dynamic
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      pos [set every repeat] = targetPos
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent orTextReal_dynamic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent lossTxtReal_dynamic
      color = black
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $riskyoption2
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    TextComponent gainTxtReal_dynamic
      color = black
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $riskyoption1
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    TextComponent safeTxtReal_dynamic
      color = black
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $safeoption
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    TextComponent vLeftReal_dynamic
      letterHeight = 0.05
      pos = (-.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = V-Left
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    TextComponent nRightReal_dynamic
      letterHeight = 0.05
      pos = (.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = N-Right
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    KeyboardComponent realChoice_dynamic
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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  Routine isiRealDynamic
    TextComponent isiTextReal_dynamic
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
      text = +
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  Routine feedbackRealDynamic
    CodeComponent codeFeedbackReal_dynamic
      Code Type = Auto->JS
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      Begin Experiment:
        #riskygain_values = []
        #riskyloss_values = []
        #certain_values = []
        #choices = []
        #outcomes = []
      Begin Routine:
        import random
        import math
        if not realChoice_dynamic.keys:
            outcometmp = math.nan
            choicetmp = math.nan
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif realChoice_dynamic.keys == 'v' and loc == 1:
            outcometmp = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            if outcometmp == riskyoption1:
                ocLoc = [-.4,.1]
                ocGambleLoc = [-.4,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.4,-.125]
            elif outcometmp == riskyoption2:
                 ocLoc = [-.4,-.1]
                 ocGambleLoc = [-.4,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.4,.125]
                 noRespLoc = [5,5]
        elif realChoice_dynamic.keys == 'v' and loc == 2:
            outcometmp = safeoption
            choicetmp = 0
            ocLoc = [-.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice_dynamic.keys == 'n' and loc ==1:
            outcometmp = safeoption
            choicetmp = 0
            ocLoc = [.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice_dynamic.keys == 'n' and loc ==2:
            outcometmp = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            if outcometmp == riskyoption1:
                ocLoc = [.4,.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,-.125]
                noRespLoc = [5,5]
            elif outcometmp == riskyoption2:
                ocLoc = [.4,-.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,.125]
                noRespLoc = [5,5]

        outcomes.append(outcometmp)
        choices.append(choicetmp)
        riskyloss_values.append(riskyoption2)
        riskygain_values.append(riskyoption1)
        certain_values.append(safeoption)
      End Experiment:
        thisExp.addData('outcomes', outcomes)
        thisExp.addData('choices', choices)
    TextComponent noRespTxtReal_dynamic
      letterHeight = 0.08
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent ocGambleReal_dynamic
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent ocSafereal_dynamic
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent outcomeTextReal_dynamic
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $outcometmp
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    PolygonComponent hideGambleReal_dynamic
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine itiReal_dynamic
    TextComponent itiTextReal_dynamic
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      text = +
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  Routine choiceWindow
    CodeComponent randLoc_2
      Code Type = Auto->JS
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      Begin Experiment:
        loc = [];
      Begin Routine:
        import random

        loc = random.choice([1,2])

        if loc==1:
            targetPos=[-.4,0]
        else:
            targetPos=[.4,0]

        if loc==1:
            lossLoc=[-.4,-.1]
            gainLoc=[-.4,.1]
            safeLoc=[.4,0]
        else:
            lossLoc=[.4,-.1]
            gainLoc=[.4,.1]
            safeLoc=[-.4,0]

        lossRounded = "$%.0f" % round(riskyoption2,0)
        gainRounded = "$%.2f" % round(riskyoption1,2)
        safeRounded = "$%.2f" % round(safeoption,2)

        #lossRounded = ("$" + str(round(riskyoption2, 2)))
        #gainRounded = ("$" + str(round(riskyoption1, 2)))
        #safeRounded = ("$" + str(round(safeoption, 2)))
      End Routine:
        thisExp.addData("loc", loc)
    PolygonComponent circleLeftReal
      fillColor = $[1,1,1]
      nVertices = 130
      pos = (-.4,0)
      shape = rectangle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent circleRightReal
      fillColor [set every repeat] = $[1,1,1]
      lineColor [set every repeat] = $[1,1,1]
      nVertices = 130
      pos = (.4,0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent lineLeftReal
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      pos [set every repeat] = targetPos
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent orTextReal
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent lossTxtReal
      color = black
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $lossRounded
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    TextComponent gainTxtReal
      color = black
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $gainRounded
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    TextComponent safeTxtReal
      color = black
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $safeRounded
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    TextComponent vLeftReal
      letterHeight = 0.05
      pos = (-.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = V-Left
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    TextComponent nRightReal
      letterHeight = 0.05
      pos = (.4, -.35)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
      text = N-Right
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    KeyboardComponent realChoice
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2
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  Routine isi
    TextComponent isiTextReal
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine showOutcome
    CodeComponent codeFeedbackReal
      Code Type = Auto->JS
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      Begin Experiment:
        riskygain_values = []
        riskyloss_values = []
        certain_values = []
        choices = []
        outcomes = []
      Begin Routine:
        import random
        import math
        if not realChoice.keys:
            outcometmp = math.nan
            choicetmp = math.nan
            riskyLoss = math.nan
            riskyGain = math.nan
            certain = math.nan
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif realChoice.keys == 'v' and loc == 1:
            outcometmp = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            riskyLoss = riskyoption2
            riskyGain = riskyoption1
            certain = safeoption
            if outcometmp == riskyoption1:
                ocLoc = [-.4,.1]
                ocGambleLoc = [-.4,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.4,-.125]
            elif outcometmp == riskyoption2:
                 ocLoc = [-.4,-.1]
                 ocGambleLoc = [-.4,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.4,.125]
                 noRespLoc = [5,5]
        elif realChoice.keys == 'v' and loc == 2:
            outcometmp = safeoption
            choicetmp = 0
            riskyLoss = riskyoption2
            riskyGain = riskyoption1
            certain = safeoption
            ocLoc = [-.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice.keys == 'n' and loc ==1:
            outcometmp = safeoption
            choicetmp = 0
            riskyLoss = riskyoption2
            riskyGain = riskyoption1
            certain = safeoption
            ocLoc = [.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice.keys == 'n' and loc ==2:
            outcometmp = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            riskyLoss = riskyoption2
            riskyGain = riskyoption1
            certain = safeoption
            if outcometmp == riskyoption1:
                ocLoc = [.4,.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,-.125]
                noRespLoc = [5,5]
            elif outcometmp == riskyoption2:
                ocLoc = [.4,-.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,.125]
                noRespLoc = [5,5]


        if outcome == riskyoption2:
            feedbackRounded = "$%.0f" % round(outcome,0)
        else:
            feedbackRounded = "$%.2f" % round(outcome,2)

        outcomes.append(outcometmp)
        choices.append(choicetmp)
        riskyloss_values.append(riskyLoss)
        riskygain_values.append(riskyGain)
        certain_values.append(certain)
      End Routine:
        thisExp.addData('outcomes', outcometmp)
        thisExp.addData('choices', choicetmp)
    TextComponent noRespTxtReal
      letterHeight = 0.08
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent ocGambleReal
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent ocSafeReal
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent outcomeTextReal
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedbackRounded
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    PolygonComponent hideGambleReal
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine iti
    TextComponent itiTextReal
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine rdmToSpanTransition
    TextComponent breaktxt
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        You have sucessfully completed the first task in this experiment!

        Please take a brief 1 minute break.

        You are welcome to take a longer break, but keep in mind this study should take no longer than 1 hour to complete.

        When you are ready to move on, press 'enter' to continue.
    KeyboardComponent stopBreak
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SpanGeneralInstructions
    TextComponent GenInsText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        In this task you will be asked to memorize a series of numbers and recall them.

        You will do this twice, once recalling the numbers in the order as presented on the screen and once recalling the numbers in the reverse order presented on the screen.

        There are 14 trials in each direction for a total of 28 trials.

        You will complete 2 practice sets prior to starting each round of this task.

        Press 'enter' to continue.
    KeyboardComponent movealong
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FSInstructions
    TextComponent FSGenInsText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        The practice for the forwards section of this task is up next.

        You will complete two practice trials, each with a list of 3 numbers.

        Type out your answer when "Recall" appears on the screen using the numbers at the top of the keyboard to type out the numbers in the order they were presented on the screen.

        If you make a mistake you can use backspace to correct it.

        Do not use spaces.

        Feedback will be provided.

        Press 'enter' to begin the practice.
    KeyboardComponent startPractice
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ShowNumbersPractice
    TextComponent fixation_2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text_practice
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[DigitLoopPractice.thisN]
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  Routine RecallPractice
    TextComponent recall_txtPractice
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxPractice
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_buttonPractice
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3practice
      Code Type = Auto->JS
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      End Routine:
        #for r in range(len(digitsForTrial)):
        #    digitsForTrial[r] = str(digitsForTrial[r])

        #digitsForTrial = ''.join(digitsForTrial)

        if textboxPractice.text == str(digits):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mousePractice
      clickable = cont_buttonPractice
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScodePractice
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textboxPractice.refresh()
  Routine FeedbackPractice
    TextComponent feedbac_textPractice
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine StartRealFS
    TextComponent praccomplete
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Practice complete!

        You are about to begin the forwards section of this task.

        You will start with a list of 3 numbers. If you are able to correctly recall the list of numbers, you will continue to larger lists.

        Press 'enter' to start the task.
    KeyboardComponent startFSreal
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine selectNumbers
    CodeComponent selectNumbersFS
      Code Type = Auto->JS
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      Begin Experiment:
        numbersToChoose = [1,2,3,4,5,6,7,8,9];
        minDigitFS = 3;
        maxDigitFS = 16;
        #minDigitBS = 2;
        #maxDigitBS = 15;
        nTrialsFS = 0;
        #nTrialsBS = 0;
        correct = [];
        incorrectCount = 0;
      Begin Routine:
        import random

        nTrialsFS += 1;

        # set the digit span, always starts at 3 for nTrial =1
        # if correct, go up one
        # if incorrect (once) stay the same
        # if incorrect (twice) go down one
        if correct == 0:
            incorrectCount += 1

        if nTrialsFS ==1:
            digitSpan = minDigitFS
        else:
            if correct ==1:
                digitSpan = digitSpan + 1
                incorrectCount = 0;
            elif correct ==0 and incorrectCount <2:
                digitSpan = digitSpan
            elif correct ==0 and incorrectCount ==2:
                digitSpan = digitSpan-1
                incorrectCount = 0;

        if digitSpan < minDigitFS:
            digitSpan = minDigitFS

        digitsForTrial = [];

        while len(digitsForTrial) < digitSpan:
            if digitSpan <= 9:
                singleNumber = random.choice(numbersToChoose)
                if digitsForTrial.count(singleNumber) < 1:
                    digitsForTrial.append(singleNumber)
            elif digitSpan > 9:
                 singleNumber = random.choice(numbersToChoose)

                 if len(digitsForTrial) < 9 and digitsForTrial.count(singleNumber)==0:
                     digitsForTrial.append(singleNumber)

                 if len(digitsForTrial) >= 9 and digitsForTrial.count(singleNumber)<2:
                     digitsForTrial.append(singleNumber)

        # check that there is not more than two consecutive numbers (e.g. 1-2-3)
        checkingNumbers = True
        startN = 1
        endN = len(digitsForTrial)-1
        while checkingNumbers:
            for n in range(startN,endN):
                if digitsForTrial[n] == digitsForTrial[n-1] + 1 and digitsForTrial[n] == digitsForTrial[n+1] -1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

                if digitsForTrial[n] == digitsForTrial[n-1] - 1 and digitsForTrial[n] == digitsForTrial[n+1] +1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

            checkingNumbers = False
        # if there are three consecutive numbers, swap the first and second numbers in the series
  Routine ShowNumbers
    CodeComponent getTmpNumberCodeFS
      Code Type = Auto->JS
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      Begin Routine:
        tmpNumber = digitsForTrial[digitLoop.thisN]
      End Routine:
        thisExp.addData("digitsForTrial",digitsForTrial)
    TextComponent fixation
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentation_text
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $tmpNumber
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  Routine Recall
    TextComponent recall_txt
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_button
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        for r in range(len(digitsForTrial)):
            digitsForTrial[r] = str(digitsForTrial[r])

        digitsForTrial = ''.join(digitsForTrial)

        if textbox.text == str(digitsForTrial):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mouse_3
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent feedback_text
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine InstructionsBS
    TextComponent BSGenInsText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        The practice for the backwards section of this task is up next.

        You will complete two practice trials, each with a list of 2 numbers.

        Type out your answer when "Recall" appears on the screen using the numbers at the top of the keyboard to type out the numbers in the REVERSE order they were presented on the screen.

        For example, if the numbers presented are 6 then 2, your response should be 26.

        If you make a mistake you can use backspace to correct it.

        Do not use spaces.

        Feedback will be provided.

        Press 'enter' to begin the practice.
    KeyboardComponent startBSprac
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine showNumbersPracticeBS
    TextComponent fixation_3
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text_practice_2
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digitsReverse)[digitLoopPracticeBS.thisN]
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  Routine recallPracticeBS
    TextComponent recall_txtPractice_2
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxPractice_2
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_buttonPractice_2
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3practice_2
      Code Type = Auto->JS
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      End Routine:
        if textboxPractice_2.text == str(digitsReverseCorrAnswer):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mousePractice_2
      clickable = cont_buttonPractice_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScodePractice_2
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textboxPractice_2.refresh()
  Routine feedbackPracticeBS
    TextComponent feedbac_textPractice_2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine startRealBS
    TextComponent praccompleteBS
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Practice complete!

        You are about to begin the backwards section of this task.

        You will start with a list of 2 numbers. If you are able to correctly recall the list of numbers, you will continue to larger lists.

        Press 'enter' to start the task.
    KeyboardComponent startBSreal
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine selectNumbersBS
    CodeComponent selectNumbersBScode
      Code Type = Auto->JS
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      Begin Experiment:
        numbersToChoose = [1,2,3,4,5,6,7,8,9];
        minDigitBS = 2;
        maxDigitBS = 15;
        nTrialsBS = 0;
        correct = [];
        incorrectCount = 0;
      Begin Routine:
        import random

        nTrialsBS += 1;

        # set the digit span, always starts at 3 for nTrial =1
        # if correct, go up one
        # if incorrect (once) stay the same
        # if incorrect (twice) go down one
        if correct == 0:
            incorrectCount += 1

        if nTrialsBS ==1:
            correct = [];
            digitSpan = minDigitBS
        else:
            if correct ==1:
                digitSpan = digitSpan + 1
                incorrectCount = 0;
            elif correct ==0 and incorrectCount <2:
                digitSpan = digitSpan
            elif correct ==0 and incorrectCount ==2:
                digitSpan = digitSpan-1
                incorrectCount = 0;

        if digitSpan < minDigitBS:
            digitSpan = minDigitBS

        digitsForTrial = [];

        while len(digitsForTrial) < digitSpan:
            if digitSpan <= 9:
                singleNumber = random.choice(numbersToChoose)
                if digitsForTrial.count(singleNumber) < 1:
                    digitsForTrial.append(singleNumber)
            elif digitSpan > 9:
                 singleNumber = random.choice(numbersToChoose)

                 if len(digitsForTrial) < 9 and digitsForTrial.count(singleNumber)==0:
                     digitsForTrial.append(singleNumber)

                 if len(digitsForTrial) >= 9 and digitsForTrial.count(singleNumber)<2:
                     digitsForTrial.append(singleNumber)

        # check that there is not more than two consecutive numbers (e.g. 1-2-3)
        checkingNumbers = True
        startN = 1
        endN = len(digitsForTrial)-1
        while checkingNumbers:
            for n in range(startN,endN):
                if digitsForTrial[n] == digitsForTrial[n-1] + 1 and digitsForTrial[n] == digitsForTrial[n+1] -1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

                if digitsForTrial[n] == digitsForTrial[n-1] - 1 and digitsForTrial[n] == digitsForTrial[n+1] +1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

            checkingNumbers = False
        # if there are three consecutive numbers, swap the first and second numbers in the series
  Routine showNumbersBS
    CodeComponent getTmpNumberCodeBS
      Code Type = Auto->JS
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      Begin Routine:
        tmpNumber = digitsForTrial[digitLoopBS.thisN]
      End Routine:
        thisExp.addData("digitsForTrial",digitsForTrial)
    TextComponent fixationBS
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentation_textBS
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $tmpNumber
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  Routine showNumbersBS_2
    CodeComponent getTmpNumberCodeBS_2
      Code Type = Auto->JS
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      Begin Routine:
        tmpNumber = digitsForTrial[digitLoopBS.thisN]
      End Routine:
        thisExp.addData("digitsForTrial",digitsForTrial)
    TextComponent fixationBS_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentation_textBS_2
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $tmpNumber
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  Routine RecallBS
    TextComponent recall_txtBS
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxBS
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_buttonBS
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3BS
      Code Type = Auto->JS
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      End Routine:
        digitsForTrial.reverse(); # reverse order for backward span

        for r in range(len(digitsForTrial)):
            digitsForTrial[r] = str(digitsForTrial[r])

        digitsForTrial = ''.join(digitsForTrial)

        if textboxBS.text == str(digitsForTrial):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mouseBS
      clickable = cont_buttonBS
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScode_BS
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine FeedbackBS
    TextComponent feedback_textBS
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine END
    TextComponent ThankYou
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Thank you! You have sucessfully completed the second portion of this study.

        You will now be automatically redirected to Qualtrics.
  Routine startDynamicTask
    TextComponent moveToRDMpart2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      text = When you are ready to begin the next round of the gambling task, press "enter".
      wrapWidth = wrap
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loadDynamicChoiceset
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    StaticComponent staticLoadChoiceset
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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    ResourceManagerComponent loadChoiceSet
      actionType = Start and Check
      checkAll = True
      forceEndRoutine = False
      resources = ['$fname[0]']
      startVal [time (s)] = 2
Flow
  Routine instructions
  Routine pracStart
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = cgtRDMPractice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'riskyGain': 18.23, 'riskyLoss': 0, 'alternative': 9.45, 'isi': 2, 'iti': 1, 'loc': 1},
      {'riskyGain': 53.27, 'riskyLoss': 0, 'alternative': 35.16, 'isi': 1, 'iti': 3, 'loc': 1},
      {'riskyGain': 8.27, 'riskyLoss': 0, 'alternative': 1.15, 'isi': 1, 'iti': 2, 'loc': 2},
      {'riskyGain': 45.88, 'riskyLoss': 0, 'alternative': 40.41, 'isi': 3, 'iti': 1, 'loc': 1},
      {'riskyGain': 21.56, 'riskyLoss': 0, 'alternative': 11.96, 'isi': 1, 'iti': 1, 'loc': 2}]
    Routine practiceTask
    Routine isiPrac
    Routine feedback
    Routine itiPrac_2
  LoopTerminator trials
  Routine postPrac
  LoopInitiator staticRDM loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = CGT-choice-set.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('riskyoption1', 20.03), ('riskyoption2', 0.0), ('safeoption', 1.99), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 28.21), ('riskyoption2', 0.0), ('safeoption', 3.89), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 17.73), ('riskyoption2', 0.0), ('safeoption', 3.13), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 25.2), ('riskyoption2', 0.0), ('safeoption', 5.4), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 16.0), ('riskyoption2', 0.0), ('safeoption', 4.0), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 22.97), ('riskyoption2', 0.0), ('safeoption', 6.51), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 14.72), ('riskyoption2', 0.0), ('safeoption', 4.64), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 21.32), ('riskyoption2', 0.0), ('safeoption', 7.34), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.94), ('riskyoption2', 0.0), ('safeoption', 5.03), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 20.53), ('riskyoption2', 0.0), ('safeoption', 7.73), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.45), ('riskyoption2', 0.0), ('safeoption', 5.27), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 19.86), ('riskyoption2', 0.0), ('safeoption', 8.07), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.04), ('riskyoption2', 0.0), ('safeoption', 5.48), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 19.28), ('riskyoption2', 0.0), ('safeoption', 8.36), ('ischecktrial', 0)])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
    Routine choiceWindow
    Routine isi
    Routine showOutcome
    Routine iti
  LoopTerminator staticRDM
  Routine computeEstimates
  Routine loadDynamicChoiceset
  Routine startDynamicTask
  LoopInitiator dynamicRDM loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = $fname[0]
    loopType = sequential
    nReps = 1
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    Routine choiceWindow
    Routine isi
    Routine showOutcome
    Routine iti
  LoopTerminator dynamicRDM
  Routine rdmToSpanTransition
