PsychoPy2experiment version="2022.2.1"
Settings
  Completed URL = $'https://udenver.qualtrics.com/jfe/form/SV_a4qaGzutOwOjcPk?id='+expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Incomplete URL = https://du.sona-systems.com
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.1
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = CGTriskyDMtask
  exportHTML = on Save
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent Instructions
      letterHeight = .05
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        As discussed in the instructions, you will choose between a gamble and a guaranteed alternative.

        You may press "V" to select the option on the left and "N" to select the option on the right.

        Press "enter" to move on to the next screen.
    KeyboardComponent inst1
      allowedKeys = "return"
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine practiceTask
    CodeComponent randLoc
      Code Type = Both
      Begin Experiment:
        textHeight = 0.05;
      Begin JS Experiment:
        textHeight = 0.05;
      Begin JS Routine:
        var pracLossRounded, pracGainRounded, pracSafeRounded

        if ((loc === 1)) {
            targetPos = [(- 0.4), 0];
        } else {
            targetPos = [0.4, 0];
        }
        if ((loc === 1)) {
            lossLoc = [(- 0.4), (- 0.1)];
            gainLoc = [(- 0.4), 0.1];
            safeLoc = [0.4, 0];
        } else {
            lossLoc = [0.4, (- 0.1)];
            gainLoc = [0.4, 0.1];
            safeLoc = [(- 0.4), 0];
        }


        //pracLossRounded = riskyLoss
        //pracGainRounded = riskyGain
        //pracSafeRounded = alternative

        /*
         function roundToTwo(num) {
                return +(Math.round(num + "e+2")  + "e-2");
         }
        */

        pracLossRounded = `$${Math.round(riskyLoss)}`;
        //pracGainRounded = `$${roundToTwo(riskyGain*100)/100}`;
        //pracSafeRounded = `$${roundToTwo(alternative*100)/100}`;

        pracGainRounded = `$${Math.round(riskyGain*100)/100}`;
        pracSafeRounded = `$${Math.round(alternative*100)/100}`;

        //console.log(pracLossRounded)
        //console.log(pracGainRounded)
        //console.log(pracSafeRounded)
      Begin Routine:
        if loc==1:
            targetPos=[-.4,0]
        else:
            targetPos=[.4,0]

        if loc==1:
            lossLoc=[-.4,-.1]
            gainLoc=[-.4,.1]
            safeLoc=[.4,0]
        else:
            lossLoc=[.4,-.1]
            gainLoc=[.4,.1]
            safeLoc=[-.4,0]


        pracLossRounded = '$%.0f' % round(riskyLoss,0)
        pracGainRounded = '$%.2f' % round(riskyGain,2)
        pracSafeRounded = '$%.2f' % round(alternative,2)
    PolygonComponent circleLeft
      fillColor = $[1,1,1]
      nVertices = 130
      pos = (-.4,0)
      shape = rectangle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent circleRight
      fillColor [set every repeat] = $[1,1,1]
      lineColor [set every repeat] = $[1,1,1]
      nVertices = 130
      pos = (.4,0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent lineLeft
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      pos [set every repeat] = targetPos
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent orText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent lossTxt
      color = black
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text [set every repeat]:
        $pracLossRounded
    TextComponent gainTxt
      color = black
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $pracGainRounded
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    TextComponent safeTxt
      color = black
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $pracSafeRounded
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    TextComponent vLeft
      letterHeight = 0.05
      pos = (-.4, -.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = V-Left
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    TextComponent nRight
      letterHeight = 0.05
      pos = (.4, -.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = N-Right
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    KeyboardComponent choice1
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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  Routine pracStart
    TextComponent startPract
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        There will now be 5 practice trials.

        When you are ready to begin the practice, press "V" or "N".
    KeyboardComponent startPracResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine isiPrac
    TextComponent isiText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $isi
      text = +
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  Routine feedback
    CodeComponent codeFeedback
      Code Type = Both
      Begin JS Experiment:
        var outcome, noRespLoc, ocLoc, ocGambleLoc, ocSafeLoc, hideGamLoc, pracFeedbackRounded, extraITI;



        noRespLoc = [0,0]
        ocLoc= [0,0]
        ocGambleLoc = [0,0]
        ocSafeLoc = [0,0]
        hideGamLoc = [0,0]
      Begin JS Routine:
        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }

        if (choice1.keys === undefined){
            outcome = " ";
            noRespLoc = [0,0];
            ocLoc = [5,5];
            ocGambleLoc = [5,5];
            ocSafeLoc = [5,5];
            hideGamLoc = [5,5];
            extraITI = 0;
        }else if(choice1.keys =='v' && loc ==1) {
            outcome = random_item([riskyGain, riskyLoss])
            extraITI = 4-choice1.rt
            if(outcome == riskyGain){
                ocLoc = [-.4,.1];
                ocGambleLoc = [-.4,0];
                ocSafeLoc = [5,5];
                noRespLoc = [5,5];
                hideGamLoc = [-.4,-.125];
            } else if (outcome ==riskyLoss){
                ocLoc = [-.4,-.1];
                ocGambleLoc = [-.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [-.4,.125];
                noRespLoc = [5,5];
            }
        } else if(choice1.keys == 'v' && loc ==2){
            extraITI = 4-choice1.rt
            outcome = alternative
            ocLoc = [-.4,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (choice1.keys=='n' && loc ==1){
            extraITI = 4-choice1.rt
            outcome = alternative
            ocLoc = [.4,0];
            ocGambleLoc = [5,5];
            ocSafeLoc = ocLoc;
            hideGamLoc = ocGambleLoc;
            noRespLoc = [5,5];
        } else if (choice1.keys =='n' && loc ==2){
            outcome = random_item([riskyGain, riskyLoss]);
            extraITI = 4-choice1.rt
            if (outcome == riskyGain){
                ocLoc = [.4,.1];
                ocGambleLoc = [.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.4,-.125];
                noRespLoc = [5,5];
            } else if (outcome == riskyLoss){
                ocLoc = [.4,-.1];
                ocGambleLoc = [.4,0];
                ocSafeLoc = [5,5];
                hideGamLoc = [.4,.125];
                noRespLoc = [5,5];
            }
        }

        /*
         function roundToTwo(num) {
                return +(Math.round(num + "e+2")  + "e-2");
         }
        */

        if (outcome == riskyLoss){
            //pracFeedbackRounded = $${Math.round(outcome)}
            pracFeedbackRounded = "$" + Math.round(outcome)
        } else {
            //pracFeedbackRounded = $${Math.round(outcome*100)/100};
            //pracFeedbackRounded = "$" + Math.round(outcome*100)/100
            pracFeedbackRounded = "$" + (Math.round(outcome*100)/100).toFixed(2)
        }

        //console.log("rounded feedback:",pracFeedbackRounded)
        //console.log("extra ITI", extraITI)
        //console.log("rt",choice1.rt)
        //console.log("iti", iti)
        //console.log("combined itis", extraITI + iti)
      Begin Routine:
        import random
        if not choice1.keys:
            outcome = " "
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif choice1.keys == 'v' and loc == 1:
            outcome = random.choice([riskyGain, riskyLoss])
            if outcome == riskyGain:
                ocLoc = [-.4,.1]
                ocGambleLoc = [-.4,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.4,-.125]
            elif outcome == riskyLoss:
                 ocLoc = [-.4,-.1]
                 ocGambleLoc = [-.4,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.4,.125]
                 noRespLoc = [5,5]
        elif choice1.keys == 'v' and loc == 2:
            outcome = alternative
            ocLoc = [-.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif choice1.keys == 'n' and loc ==1:
            outcome = alternative
            ocLoc = [.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif choice1.keys == 'n' and loc ==2:
            outcome = random.choice([riskyGain, riskyLoss])
            if outcome == riskyGain:
                ocLoc = [.4,.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,-.125]
                noRespLoc = [5,5]
            elif outcome == riskyLoss:
                ocLoc = [.4,-.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,.125]
                noRespLoc = [5,5]

        if outcome == riskyLoss:
            pracFeedbackRounded = "$%.0f" % round(outcome,0)
        else:
            pracFeedbackRounded = "$%.2f" % round(outcome,2)
      End JS Routine:
        psychoJS.experiment.addData('outcome', outcome)
        psychoJS.experiment.addData('extraITI', extraITI)
      End Routine:
        thisExp.addData('outcome', outcome)
    TextComponent noRespTxt
      letterHeight = textHeight
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent ocGamble
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent ocSafe
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent outcomeText
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $pracFeedbackRounded
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    PolygonComponent hideGamble
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine itiPrac_2
    TextComponent itiText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti + extraITI
      text = +
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
  Routine postPrac
    TextComponent postPracText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Practice complete.

        When you are ready to start ROUND 1 of the task, press "V" or "N".
    KeyboardComponent postPractResp
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine computeEstimates
    CodeComponent gridSearchCode
      Code Type = Both
      Begin Experiment:
        import math

        ### Function Definitions

        def choice_probability(parameters, riskyGv, riskyLv, certv):
            # Pull out parameters
            rho = parameters[0];
            mu = parameters[1];

            nTrials = len(riskyGv);

            # Calculate utility of the two options
            utility_riskygain_value = [math.pow(value, rho) for value in riskyGv];
            utility_riskyloss_value = [math.pow(value, rho) for value in riskyLv];
            utility_risky_option = [.5 * utility_riskygain_value[t] + .5 * utility_riskyloss_value[t] for t in range(nTrials)];
            utility_safe_option = [math.pow(value, rho) for value in certv]

            # Normalize values with div
            div = max(riskyGv)**rho;

            # Softmax
            p = [1/(1 + math.exp(-mu/div*(utility_risky_option[t] - utility_safe_option[t]))) for t in range(nTrials)];
            return p

        def negLLprospect_cgt(parameters, riskyGv, riskyLv, certv, choices):
            choiceP = choice_probability(parameters, riskyGv, riskyLv, certv);

            nTrials = len(choiceP);

            likelihood = [choices[t]*choiceP[t] + (1-choices[t])*(1-choiceP[t]) for t in range(nTrials)];
            zeroindex = [likelihood[t] == 0 for t in range(nTrials)];
            for ind in range(nTrials):
                if zeroindex[ind]:
                    likelihood[ind] = 0.000000000000001;

            loglikelihood = [math.log(likelihood[t]) for t in range(nTrials)];

            nll = -sum(loglikelihood);
            return nll

        fname =[];
      Begin JS Routine:
        // Access the data from previous RDM task and save only the trials where participant responded on time
        var pulledData, finiteChoices, finiteGainVals, finiteSafeVals, finiteLossVals

        pulledData = psychoJS.experiment._trialsData
        //console.log("pulled data:", pulledData)
        finiteData = pulledData.filter((trial) => (trial['realChoice.keys'] =='v' || trial['realChoice.keys'] =='n'));
        //console.log("finite data:", finiteData)
        finiteChoices = finiteData.map((trial) => trial['choices']);
        finiteGainVals = finiteData.map((trial) => trial['riskyoption1']);
        finiteLossVals = finiteData.map((trial) => trial['riskyoption2']);
        finiteSafeVals = finiteData.map((trial) => trial['safeoption']);

        /*
        console.log("finite choices:", finiteChoices)
        console.log("finite gain values:", finiteGainVals)
        console.log("finite loss values:", finiteLossVals)
        console.log("finite safe values:",finiteSafeVals)
        */

        // Function Definitions
        var fname, dynamicChoiceSetFilename;

        function choice_probability(parameters, riskyGv, riskyLv, certv) {
          var rho, mu, nTrials, div, utility_risky_option, utility_safe_option, p

          rho = parameters[0];
          mu = parameters[1];

          nTrials = riskyGv.length;

          div = Math.max.apply(Math,riskyGv) ** rho;

          //utility_risky_option = [];
          //utility_safe_option = [];
          p = Array()

          for (let i = 0; i < nTrials; i++){
            utility_risky_option = 0.5 * Math.pow(riskyGv[i],rho) + 0.5 * Math.pow(riskyLv[i],rho);
            utility_safe_option = Math.pow(certv[i],rho);

            //console.log(utility_risky_option)
            //console.log(utility_safe_option)

            p[i] = 1/(1 + Math.exp(-mu/div*(utility_risky_option - utility_safe_option)))
            //p.push(1/(1 + Math.exp(-mu/div*(utility_risky_option - utility_safe_option))))
          }
          //console.log(p)
          return p
        }


        function negLLprospect_cgt(parameters, riskyGv, riskyLv, certv, choices, likelihood, negloglikelihood) {

          var choiceProb, nTrials, nll, likelihood, negloglikelihood

          choiceProb = choice_probability(parameters, riskyGv, riskyLv, certv);
          //console.log("choiceprob:", choiceProb)

          nTrials = riskyGv.length;

          likelihood = Array()
          negloglikelihood = Array()

          for (let t = 0; t < nTrials; t++){
            likelihood[t] = choices[t]*choiceProb[t] + (1-choices[t])*(1-choiceProb[t]);
            if (likelihood[t] == 0){
              likelihood[t] = 0.000000000000001;
            }
            negloglikelihood[t] = -Math.log(likelihood[t]);
          }

          nll = negloglikelihood.reduce((partialSum, a) => partialSum + a, 0);

          return nll
        }

        // Grid Search Code

        var bestM, bestR, best_nll_value, mmax, mmin, mstep, mu_values, n_mu_values, n_rho_values, nll_new, rho_values, rmax, rmin, rstep;

        n_rho_values = 200;
        n_mu_values = 201;

        //console.log('n_rho_values', n_rho_values)
        //console.log('n_mu_values', n_mu_values)

        rmin = 0.3
        rmax = 2.2
        rstep = (rmax - rmin)/(n_rho_values-1)

        /*
        console.log('rmin', rmin)
        console.log('rmax', rmax)
        console.log('rstep', rstep)
        */

        mmin = 7
        mmax = 80
        mstep = (mmax - mmin)/(n_mu_values-1)

        /*
        console.log('mmin', mmin)
        console.log('mmax', mmax)
        console.log('mstep', mstep)
        */

        rho_values = Array()
        mu_values = Array()

        for (let r = 0; r < n_rho_values; r++){
          rho_values[r] = [rmin + r*rstep]; // creates the rho values
        }

        for (let m = 0; m < n_mu_values; m++){
          mu_values[m] = [mmin + m*mstep]; // creates the mu values
        }

        best_nll_value = 1e10; // a preposterously bad first nll

        for (let r = 0; r < n_rho_values; r++){
          for (let m = 0; m < n_mu_values; m++){
            nll_new = negLLprospect_cgt([rho_values[r], mu_values[m]], finiteGainVals, finiteLossVals, finiteSafeVals, finiteChoices);
            if (nll_new < best_nll_value) {
              best_nll_value = nll_new;
              bestR = r + 1; // +1 corrects for diff. in javascript vs. R indexing
              bestM = m + 1; // +1 corrects for diff. in javascript vs. R indexing
            }
          }
        }

        // print indices of best-fitting parameter values + NLL
        //console.log("The best R index is",bestR,"while the best M index is",bestM,", with an NLL of",best_nll_value)

        var str_bestR, str_bestM
        // Format the indices for good printing to filename
        str_bestR = String(bestR);
        if(str_bestR.length == 1){
          str_bestR = "00" + str_bestR;
        } else if (str_bestR.length == 2) {
          str_bestR = "0" + str_bestR;
        }

        str_bestM = String(bestM);
        if(str_bestM.length == 1){
          str_bestM = "00" + str_bestM;
        } else if (str_bestM.length == 2) {
          str_bestM = "0" + str_bestM;
        }

        // The file name to use in part 2
        fname = "bespoke_choiceset_rhoInd" + str_bestR + "_muInd" + str_bestM + ".csv";
        dynamicChoiceSetFilepath = "bespoke_choicesets/" + fname
        //console.log("dynamic choiceset:", dynamicChoiceSetFilepath)

        // save information
        psychoJS.experiment.addData("dynamicChoiceSetName", fname);
        psychoJS.experiment.addData("dynamicChoiceSetPath", dynamicChoiceSetFilepath);
        psychoJS.experiment.addData("bestRho",bestR)
        psychoJS.experiment.addData("bestMu", bestM)
      Begin Routine:
        ### Grid Search Code
        import math

        # Prepare choice set values to remove any nans
        finiteChoices = []
        finiteGainVals = []
        finiteSafeVals = []
        finiteLossVals = []

        # just save trial things where participant responded
        for t in range(len(choices)):
            if math.isfinite(choices[t]):
                finiteChoices.append(choices[t])
                finiteGainVals.append(riskygain_values[t])
                finiteSafeVals.append(certain_values[t])
                finiteLossVals.append(riskyloss_values[t])


        # Prepare rho & mu values
        n_rho_values = 200;
        n_mu_values = 201;

        rmin = 0.3
        rmax = 2.2
        rstep = (rmax - rmin)/(n_rho_values-1)

        mmin = 7
        mmax = 80
        mstep = (mmax - mmin)/(n_mu_values-1)

        rho_values = [];
        mu_values = [];

        for r in range(n_rho_values):
            rho_values += [rmin + r*rstep];

        for m in range(n_mu_values):
            mu_values += [mmin + m*mstep];

        # Execute the grid search
        best_nll_value = 1e10; # a preposterously bad first NLL

        for r in range(n_rho_values):
            for m in range(n_mu_values):
                nll_new = negLLprospect_cgt([rho_values[r], mu_values[m]], finiteGainVals, finiteLossVals, finiteSafeVals, finiteChoices);
                if nll_new < best_nll_value:
                    best_nll_value = nll_new;
                    bestR = r + 1; # "+1" corrects for diff. in python vs. R indexing
                    bestM = m + 1; # "+1" corrects for diff. in python vs. R indexing

        print('The best R index is', bestR, 'while the best M index is', bestM, ', with an NLL of', best_nll_value);

        fname.append("../cgt_gamblingSpanTasks/bespoke_choicesets/bespoke_choiceset_rhoInd%03i_muInd%03i.csv" % (bestR, bestM))
        dynamicChoiceSetFilename = fname[0]
    VariableComponent dynamicChoiceSet
      saveStartRoutine = True
      startRoutineValue = fname[0]
      startVal [time (s)] = 1
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    VariableComponent bestRho
      startRoutineValue = bestR
      startVal [time (s)] = 1
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    VariableComponent bestMu
      startRoutineValue = bestM
      startVal [time (s)] = 1
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    TextComponent settingUpForPart2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      wrapWidth = wrap
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      text:
        ROUND 1 of the gambling task is complete!

        Setting up for the last round of the gambling task.

        Please wait...
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
  Routine choiceWindow
    CodeComponent randLoc_2
      Code Type = Both
      Begin Experiment:
        loc = [];
      Begin JS Experiment:
        var realloc
      Begin JS Routine:
        var gainLoc, gainRounded, lossLoc, lossRounded, safeLoc, safeRounded, targetPos;

        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }

        realloc = random_item([1, 2]);

        if ((realloc === 1)) {
            targetPos = [(- 0.4), 0];
        } else {
            targetPos = [0.4, 0];
        }
        if ((realloc === 1)) {
            lossLoc = [(- 0.4), (- 0.1)];
            gainLoc = [(- 0.4), 0.1];
            safeLoc = [0.4, 0];
        } else {
            lossLoc = [0.4, (- 0.1)];
            gainLoc = [0.4, 0.1];
            safeLoc = [(- 0.4), 0];
        }

        //console.log(realloc)

        /*
         function roundToTwo(num) {
                return +(Math.round(num + "e+2")  + "e-2");
         }
        */

        lossRounded = `$${Math.round(riskyoption2)}`;
        gainRounded = `$${(Math.round(riskyoption1*100)/100).toFixed(2)}`;
        safeRounded = `$${(Math.round(safeoption*100)/100).toFixed(2)}`;

        //lossRounded = `$${Math.round(riskyoption2)}`;
        //gainRounded = `$${Math.round(riskyoption1*100)/100}`;
        //safeRounded = `$${Math.round(safeoption*100)/100}`;
      Begin Routine:
        import random

        loc = random.choice([1,2])

        if loc==1:
            targetPos=[-.4,0]
        else:
            targetPos=[.4,0]

        if loc==1:
            lossLoc=[-.4,-.1]
            gainLoc=[-.4,.1]
            safeLoc=[.4,0]
        else:
            lossLoc=[.4,-.1]
            gainLoc=[.4,.1]
            safeLoc=[-.4,0]

        lossRounded = "$%.0f" % round(riskyoption2,0)
        gainRounded = "$%.2f" % round(riskyoption1,2)
        safeRounded = "$%.2f" % round(safeoption,2)

        #lossRounded = ("$" + str(round(riskyoption2, 2)))
        #gainRounded = ("$" + str(round(riskyoption1, 2)))
        #safeRounded = ("$" + str(round(safeoption, 2)))
      End JS Routine:
        psychoJS.experiment.addData("realloc", realloc);
      End Routine:
        thisExp.addData("loc", loc)
    PolygonComponent circleLeftReal
      fillColor = $[1,1,1]
      nVertices = 130
      pos = (-.4,0)
      shape = rectangle
      size = (.5, .5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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    PolygonComponent circleRightReal
      fillColor [set every repeat] = $[1,1,1]
      lineColor [set every repeat] = $[1,1,1]
      nVertices = 130
      pos = (.4,0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    PolygonComponent lineLeftReal
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      lineWidth = 3
      pos [set every repeat] = targetPos
      shape = rectangle
      size = (0.5, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent orTextReal
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = OR
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    TextComponent lossTxtReal
      color = black
      letterHeight = 0.1
      pos [set every repeat] = lossLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $lossRounded
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    TextComponent gainTxtReal
      color = black
      letterHeight = 0.1
      pos [set every repeat] = gainLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $gainRounded
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    TextComponent safeTxtReal
      color = black
      letterHeight = 0.1
      pos [set every repeat] = safeLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $safeRounded
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    TextComponent vLeftReal
      letterHeight = 0.05
      pos = (-.4, -.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = V-Left
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    TextComponent nRightReal
      letterHeight = 0.05
      pos = (.4, -.35)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      text = N-Right
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    KeyboardComponent realChoice
      allowedKeys = 'v','n'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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  Routine isi
    TextComponent isiTextReal
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine showOutcome
    CodeComponent codeFeedbackReal
      Code Type = Both
      Begin Experiment:
        riskygain_values = []
        riskyloss_values = []
        certain_values = []
        choices = []
        outcomes = []
      Begin JS Experiment:
        var actualITI
        choices= []
        outcomes = []
      Begin JS Routine:
        var choicetmp, feedbackRounded, outcometmp, outcomes, choices;


        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }

        if (realChoice.keys === undefined) {
            outcometmp = Math.nan;
            choicetmp = Math.nan;
            noRespLoc = [0, 0];
            ocLoc = [5, 5];
            ocGambleLoc = [5, 5];
            ocSafeLoc = [5, 5];
            hideGamLoc = [5, 5];
            extraITI = 0;
        } else if (realChoice.keys === "v" && realloc === 1) {
             outcometmp = random_item([riskyoption1, riskyoption2]);
             choicetmp = 1;
             extraITI = 4-realChoice.rt
             if (outcometmp === riskyoption1) {
                  ocLoc = [(- 0.4), 0.1];
                  ocGambleLoc = [(- 0.4), 0];
                  ocSafeLoc = [5, 5];
                  noRespLoc = [5, 5];
                  hideGamLoc = [(- 0.4), (- 0.125)];
             } else if (outcometmp === riskyoption2) {
                  ocLoc = [(- 0.4), (- 0.1)];
                  ocGambleLoc = [(- 0.4), 0];
                  ocSafeLoc = [5, 5];
                  hideGamLoc = [(- 0.4), 0.125];
                  noRespLoc = [5, 5];
             }
         } else if (realChoice.keys === "v" && realloc === 2) {
             outcometmp = safeoption;
             choicetmp = 0;
             extraITI = 4-realChoice.rt
             ocLoc = [(- 0.4), 0];
             ocGambleLoc = [5, 5];
             ocSafeLoc = ocLoc;
             hideGamLoc = ocGambleLoc;
             noRespLoc = [5, 5];
         } else if (realChoice.keys === "n" && realloc === 1) {
             outcometmp = safeoption;
             choicetmp = 0;
             extraITI = 4-realChoice.rt
             ocLoc = [0.4, 0];
             ocGambleLoc = [5, 5];
             ocSafeLoc = ocLoc;
             hideGamLoc = ocGambleLoc;
             noRespLoc = [5, 5];
        } else if (realChoice.keys === "n" && realloc === 2) {
            outcometmp = random_item([riskyoption1, riskyoption2]);
            choicetmp = 1;
            extraITI = 4-realChoice.rt
            if (outcometmp === riskyoption1) {
                ocLoc = [0.4, 0.1];
                ocGambleLoc = [0.4, 0];
                ocSafeLoc = [5, 5];
                hideGamLoc = [0.4, (- 0.125)];
                noRespLoc = [5, 5];
            } else if (outcometmp === riskyoption2) {
                ocLoc = [0.4, (- 0.1)];
                ocGambleLoc = [0.4, 0];
                ocSafeLoc = [5, 5];
                hideGamLoc = [0.4, 0.125];
                noRespLoc = [5, 5];
            }
        }

        actualITI = initITIstatic[staticRDM.thisN] + extraITI


        if (outcometmp === riskyoption2) {
            feedbackRounded = "$" + Math.round(outcometmp)
        } else {
            feedbackRounded = "$" + (Math.round(outcometmp*100)/100).toFixed(2)
            //feedbackRounded = "$" + Math.round(outcometmp*100)/100
        }

        /*
        console.log("outcome rounded:",feedbackRounded)
        console.log("gain:",riskyoption1)
        console.log("loss:",riskyoption2)
        console.log("safe:",safeoption)
        console.log("outcome:", outcometmp)
        console.log("choice:", choicetmp)
        console.log("extra iti:", extraITI)
        console.log("rt", realChoice.rt)
        console.log("actualITI", actualITI)
        console.log("init ITI", initITIstatic[staticRDM.thisN])
        */

        psychoJS.experiment.addData("outcomes", outcometmp);
        psychoJS.experiment.addData("choices", choicetmp);
        psychoJS.experiment.addData("extraITI", extraITI);
        psychoJS.experiment.addData("actualITI",actualITI)
        psychoJS.experiment.addData("init ITI", initITIstatic[staticRDM.thisN])
      Begin Routine:
        import random
        import math
        if not realChoice.keys:
            outcometmp = math.nan
            choicetmp = math.nan
            riskyLossReal = math.nan
            riskyGainReal = math.nan
            certain = math.nan
            noRespLoc = [0,0]
            ocLoc = [5,5]
            ocGambleLoc = [5,5]
            ocSafeLoc = [5,5]
            hideGamLoc = [5,5]
        elif realChoice.keys == 'v' and loc == 1:
            outcometmp = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            if outcometmp == riskyoption1:
                ocLoc = [-.4,.1]
                ocGambleLoc = [-.4,0]
                ocSafeLoc = [5,5]
                noRespLoc = [5,5]
                hideGamLoc = [-.4,-.125]
            elif outcometmp == riskyoption2:
                 ocLoc = [-.4,-.1]
                 ocGambleLoc = [-.4,0]
                 ocSafeLoc = [5,5]
                 hideGamLoc = [-.4,.125]
                 noRespLoc = [5,5]
        elif realChoice.keys == 'v' and loc == 2:
            outcometmp = safeoption
            choicetmp = 0
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            ocLoc = [-.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice.keys == 'n' and loc ==1:
            outcometmp = safeoption
            choicetmp = 0
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            ocLoc = [.4,0]
            ocGambleLoc = [5,5]
            ocSafeLoc = ocLoc
            hideGamLoc = ocGambleLoc
            noRespLoc = [5,5]
        elif realChoice.keys == 'n' and loc ==2:
            outcometmp = random.choice([riskyoption1, riskyoption2])
            choicetmp = 1
            riskyLossReal = riskyoption2
            riskyGainReal = riskyoption1
            certain = safeoption
            if outcometmp == riskyoption1:
                ocLoc = [.4,.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,-.125]
                noRespLoc = [5,5]
            elif outcometmp == riskyoption2:
                ocLoc = [.4,-.1]
                ocGambleLoc = [.4,0]
                ocSafeLoc = [5,5]
                hideGamLoc = [.4,.125]
                noRespLoc = [5,5]


        if outcome == riskyoption2:
            feedbackRounded = "$%.0f" % round(outcome,0)
        else:
            feedbackRounded = "$%.2f" % round(outcome,2)

        outcomes.append(outcometmp)
        choices.append(choicetmp)
        riskyloss_values.append(riskyLossReal)
        riskygain_values.append(riskyGainReal)
        certain_values.append(certain)
      End JS Routine:
        outcomes.push(outcometmp);
        choices.push(choicetmp);
        //riskyloss_values.push(riskyLossReal);
        //riskygain_values.push(riskyGainReal);
        //certain_values.push(certain);
      End Routine:
        thisExp.addData('outcomes', outcometmp)
        thisExp.addData('choices', choicetmp)
    TextComponent noRespTxtReal
      letterHeight = 0.08
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent ocGambleReal
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent ocSafeReal
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent outcomeTextReal
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedbackRounded
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    PolygonComponent hideGambleReal
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine iti
    TextComponent itiTextReal
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $actualITI
      text = +
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  Routine rdmToSpanTransition
    TextComponent breaktxt
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        You have sucessfully completed the first task in this experiment!

        Please take a brief 1 minute break.

        You are welcome to take a longer break, but keep in mind this study should take no longer than 1 hour to complete.

        When you are ready to move on, press 'enter' to continue.
    KeyboardComponent stopBreak
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent setUpTextFormatting
      Code Type = Auto->JS
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      Begin Experiment:
        instructionsTextHeight = 0.04;
        letterTextHeight = 0.1;
        wrap = 1.6
  Routine SpanGeneralInstructions
    TextComponent GenInsText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        In this task you will be asked to memorize a series of numbers and recall them.

        You will do this twice, once recalling the numbers in the order as presented on the screen and once recalling the numbers in the reverse order as presented on the screen.

        There are 14 trials in each direction for a total of 28 trials.

        You will complete 2 practice sets prior to starting each round of this task.

        Press 'enter' to continue.
    KeyboardComponent movealong
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FSInstructions
    TextComponent FSGenInsText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        The practice for the forwards section of this task is up next.

        You will complete two practice trials, each with a list of 3 numbers.

        Type out your answer when "Recall" appears on the screen using the numbers at the top of the keyboard to type out the numbers in the order they were presented on the screen.

        DO NOT use spaces or any other symbols (ONLY enter numbers) when you type your answer, otherwise your answer will be counted as incorrect.

        For example, if the numbers displayed on the screen are 5 then 7, the correct response is 57.

        If you make a mistake you can use backspace to correct it.

        Feedback will be provided.

        Press 'enter' to begin the practice.
    KeyboardComponent startPractice
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ShowNumbersPractice
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        //console.log(digits)
    TextComponent fixation_2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text_practice
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[DigitLoopPractice.thisN]
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  Routine RecallPractice
    TextComponent recall_txtPractice
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxPractice
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0
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    ImageComponent cont_buttonPractice
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0
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    CodeComponent code_3practice
      Code Type = Auto->JS
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      End Routine:
        #for r in range(len(digitsForTrial)):
        #    digitsForTrial[r] = str(digitsForTrial[r])

        #digitsForTrial = ''.join(digitsForTrial)

        if textboxPractice.text == str(digits):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mousePractice
      clickable = cont_buttonPractice
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0
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    CodeComponent JScodePractice
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textboxPractice.refresh()
  Routine FeedbackPractice
    TextComponent feedbac_textPractice
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine StartRealFS
    TextComponent praccomplete
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Practice complete!

        You are about to begin the forwards section of this task.

        You will start with a list of 3 numbers. If you are able to correctly recall the list of numbers, you will continue to larger lists.

        DO NOT use spaces or any other symbols (ONLY enter numbers) when you type your answer, otherwise your answer will be counted as incorrect.

        Press 'enter' to start the task.
    KeyboardComponent startFSreal
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine selectNumbers
    CodeComponent selectNumbersFS
      Code Type = Both
      Begin Experiment:
        numbersToChoose = [1,2,3,4,5,6,7,8,9];
        minDigitFS = 3;
        maxDigitFS = 16;
        #minDigitBS = 2;
        #maxDigitBS = 15;
        nTrialsFS = 0;
        #nTrialsBS = 0;
        correct = [];
        incorrectCount = 0;
      Begin JS Experiment:
        var digitSpan, digitsForTrial, nTrialsFS, correctCount, incorrectCount;

        //nTrialsFS = 0;
      Begin JS Routine:
        //import * as random from 'random';
        var checkingNumbers, endN, singleNumber, startN, tmpFirst, tmpSecond, numbersToChoose, minDigitFS, maxDigitFS;

        numbersToChoose = [1, 2, 3, 4, 5, 6, 7, 8, 9];
        minDigitFS = 3;
        maxDigitFS = 16;
        //correctCount = [];
        //incorrectCount = 0;


        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }

        //nTrialsFS += 1;
        //nTrialsFS = nTrialsFS+1;

        nTrialsFS = trialsFS.thisN
        //console.log("nTrialsFS:", nTrialsFS)

        // make incorrect count 0 on the first trial
        if (nTrialsFS === 0){
            incorrectCount = 0;
        }

        if (correctCount === 0) {
            incorrectCount = incorrectCount + 1;
        }

        //if ((nTrialsFS === 1)) {
        if (nTrialsFS === 0) {
            digitSpan = minDigitFS;
        } else if (nTrialsFS !== 0) {
            if (correctCount ===1) {
                digitSpan = (digitSpan +1)
                incorrectCount = 0;
            } else if (correctCount === 0 && incorrectCount < 2){
                digitSpan = digitSpan
            } else if (correctCount === 0 && incorrectCount === 2){
                digitSpan = (digitSpan - 1);
                incorrectCount = 0;
            }
        }

        /*
        console.log("digit span:",digitSpan)
        console.log("correct count:", correctCount)
        console.log("incorrectCount:", incorrectCount)
        */

        if ((digitSpan < minDigitFS)) {
            digitSpan = minDigitFS;
        }

        digitsForTrial = [];
        while ((digitsForTrial.length < digitSpan)) {
            if ((digitSpan <= 9)) {
                singleNumber = random_item(numbersToChoose);
                if ((util.count(digitsForTrial, singleNumber) < 1)) {
                    digitsForTrial.push(singleNumber);
                }
            } else {
                if ((digitSpan > 9)) {
                    singleNumber = random_item(numbersToChoose);
                    if (((digitsForTrial.length < 9) && (util.count(digitsForTrial, singleNumber) === 0))) {
                        digitsForTrial.push(singleNumber);
                    }
                    if (((digitsForTrial.length >= 9) && (util.count(digitsForTrial, singleNumber) < 2))) {
                        digitsForTrial.push(singleNumber);
                    }
                }
            }
        }
        checkingNumbers = true;
        startN = 1;
        endN = (digitsForTrial.length - 1);
        while (checkingNumbers) {
            for (var n, _pj_c = 0, _pj_a = util.range(startN, endN), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                n = _pj_a[_pj_c];
                if (((digitsForTrial[n] === (digitsForTrial[(n - 1)] + 1)) && (digitsForTrial[n] === (digitsForTrial[(n + 1)] - 1)))) {
                    tmpFirst = digitsForTrial[n];
                    tmpSecond = digitsForTrial[(n - 1)];
                    digitsForTrial[n] = tmpSecond;
                    digitsForTrial[(n - 1)] = tmpFirst;
                }
                if (((digitsForTrial[n] === (digitsForTrial[(n - 1)] - 1)) && (digitsForTrial[n] === (digitsForTrial[(n + 1)] + 1)))) {
                    tmpFirst = digitsForTrial[n];
                    tmpSecond = digitsForTrial[(n - 1)];
                    digitsForTrial[n] = tmpSecond;
                    digitsForTrial[(n - 1)] = tmpFirst;
                }
            }
            checkingNumbers = false;
        }

        //console.log(digitSpan)
        //console.log(digitsForTrial)
      Begin Routine:
        import random

        nTrialsFS += 1;

        # set the digit span, always starts at 3 for nTrial =1
        # if correct, go up one
        # if incorrect (once) stay the same
        # if incorrect (twice) go down one
        if correct == 0:
            incorrectCount += 1

        if nTrialsFS ==1:
            digitSpan = minDigitFS
        else:
            if correct ==1:
                digitSpan = digitSpan + 1
                incorrectCount = 0;
            elif correct ==0 and incorrectCount <2:
                digitSpan = digitSpan
            elif correct ==0 and incorrectCount ==2:
                digitSpan = digitSpan-1
                incorrectCount = 0;

        if digitSpan < minDigitFS:
            digitSpan = minDigitFS

        digitsForTrial = [];

        while len(digitsForTrial) < digitSpan:
            if digitSpan <= 9:
                singleNumber = random.choice(numbersToChoose)
                if digitsForTrial.count(singleNumber) < 1:
                    digitsForTrial.append(singleNumber)
            elif digitSpan > 9:
                 singleNumber = random.choice(numbersToChoose)

                 if len(digitsForTrial) < 9 and digitsForTrial.count(singleNumber)==0:
                     digitsForTrial.append(singleNumber)

                 if len(digitsForTrial) >= 9 and digitsForTrial.count(singleNumber)<2:
                     digitsForTrial.append(singleNumber)

        # check that there is not more than two consecutive numbers (e.g. 1-2-3)
        checkingNumbers = True
        startN = 1
        endN = len(digitsForTrial)-1
        while checkingNumbers:
            for n in range(startN,endN):
                if digitsForTrial[n] == digitsForTrial[n-1] + 1 and digitsForTrial[n] == digitsForTrial[n+1] -1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

                if digitsForTrial[n] == digitsForTrial[n-1] - 1 and digitsForTrial[n] == digitsForTrial[n+1] +1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

            checkingNumbers = False
        # if there are three consecutive numbers, swap the first and second numbers in the series
  Routine ShowNumbers
    CodeComponent getTmpNumberCodeFS
      Code Type = Both
      Begin JS Routine:
        var tmpNumber
        tmpNumber = digitsForTrial[digitLoop.thisN];
      Begin Routine:
        tmpNumber = digitsForTrial[digitLoop.thisN]
      End JS Routine:
        psychoJS.experiment.addData("digitsForTrial", digitsForTrial);
      End Routine:
        thisExp.addData("digitsForTrial",digitsForTrial)
    TextComponent fixation
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentation_text
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $tmpNumber
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  Routine Recall
    TextComponent recall_txt
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_button
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      End JS Routine:
        for (var r, _pj_c = 0, _pj_a = util.range(digitsForTrial.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            r = _pj_a[_pj_c];
            digitsForTrial[r] = digitsForTrial[r].toString();
        }
        digitsForTrial = digitsForTrial.join("");
        if ((textbox.text === digitsForTrial.toString())) {
            correctCount = 1;
            fbTxt = "Correct!";
        } else {
            correctCount = 0;
            fbTxt = "Incorrect";
        }
        psychoJS.experiment.addData("correct", correctCount);
      End Routine:
        for r in range(len(digitsForTrial)):
            digitsForTrial[r] = str(digitsForTrial[r])

        digitsForTrial = ''.join(digitsForTrial)

        if textbox.text == str(digitsForTrial):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mouse_3
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent feedback_text
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine InstructionsBS
    TextComponent BSGenInsText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        The practice for the backwards section of this task is up next.

        You will complete two practice trials, each with a list of 2 numbers.

        Type out your answer when "Recall" appears on the screen using the numbers at the top of the keyboard to type out the numbers in the REVERSE order they were presented on the screen.

        For example, if the numbers presented are 6 then 2, your response should be 26.

        Please DO NOT use spaces or any other symbols (ONLY enter numbers) when you type your answer, otherwise your answer will be counted as incorrect.

        If you make a mistake you can use backspace to correct it.

        Feedback will be provided.

        Press 'enter' to begin the practice.
    KeyboardComponent startBSprac
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine showNumbersPracticeBS
    TextComponent fixation_3
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text_practice_2
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digitsReverse)[digitLoopPracticeBS.thisN]
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  Routine recallPracticeBS
    TextComponent recall_txtPractice_2
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxPractice_2
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_buttonPractice_2
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3practice_2
      Code Type = Auto->JS
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      End Routine:
        if textboxPractice_2.text == str(digitsReverseCorrAnswer):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mousePractice_2
      clickable = cont_buttonPractice_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScodePractice_2
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textboxPractice_2.refresh()
  Routine feedbackPracticeBS
    TextComponent feedbac_textPractice_2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine startRealBS
    TextComponent praccompleteBS
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Practice complete!

        You are about to begin the backwards section of this task.

        You will start with a list of 2 numbers. If you are able to correctly recall the list of numbers, you will continue to larger lists.

        DO NOT use spaces or any other symbols (ONLY enter numbers) when you type your answer, otherwise your answer will be counted as incorrect.

        Press 'enter' to start the task.
    KeyboardComponent startBSreal
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine selectNumbersBS
    CodeComponent selectNumbersBScode
      Code Type = Both
      Begin Experiment:
        numbersToChoose = [1,2,3,4,5,6,7,8,9];
        minDigitBS = 2;
        maxDigitBS = 15;
        nTrialsBS = 0;
        correct = [];
        incorrectCount = 0;
      Begin JS Experiment:
        var nTrialsBS

        //nTrialsBS = 0;
      Begin JS Routine:
        //import * as random from 'random';
        var checkingNumbers,endN, singleNumber, startN, tmpFirst, tmpSecond, numbersToChoose, minDigitBS, maxDigitBS

        numbersToChoose = [1, 2, 3, 4, 5, 6, 7, 8, 9];
        minDigitBS = 2;
        maxDigitBS = 15;
        //correct = [];
        //incorrectCount = 0;

        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }



        //nTrialsBS += 1;
        nTrialsBS = trialsBS.thisN
        //console.log("nTrialsBS:", nTrialsBS)

        // reset incorrect count on the first trial
        if (nTrialsBS ===0) {
            incorrectCount = 0
            correctCount = Math.nan
        }

        if (correctCount === 0) {
            incorrectCount = incorrectCount + 1;
        }

        if (nTrialsBS === 0) {
            //correctCount = 0;
            digitSpan = minDigitBS;
        } else if (nTrialsBS !==0){
            if (correctCount ===1){
                digitSpan = (digitSpan + 1);
                incorrectCount = 0;
            } else if (correctCount === 0 && incorrectCount < 2) {
                digitSpan = digitSpan;
            } else if (correctCount === 0 && incorrectCount === 2) {
                digitSpan = (digitSpan - 1);
                incorrectCount = 0;
            }
        }

        /*
        console.log("digit span:",digitSpan)
        console.log("correct count:", correctCount)
        console.log("incorrectCount:", incorrectCount)
        */

        if (digitSpan < minDigitBS) {
            digitSpan = minDigitBS;
        }

        digitsForTrial = [];
        while ((digitsForTrial.length < digitSpan)) {
            if ((digitSpan <= 9)) {
                singleNumber = random_item(numbersToChoose);
                if ((util.count(digitsForTrial, singleNumber) < 1)) {
                    digitsForTrial.push(singleNumber);
                }
            } else {
                if ((digitSpan > 9)) {
                    singleNumber = random_item(numbersToChoose);
                    if (((digitsForTrial.length < 9) && (util.count(digitsForTrial, singleNumber) === 0))) {
                        digitsForTrial.push(singleNumber);
                    }
                    if (((digitsForTrial.length >= 9) && (util.count(digitsForTrial, singleNumber) < 2))) {
                        digitsForTrial.push(singleNumber);
                    }
                }
            }
        }
        checkingNumbers = true;
        startN = 1;
        endN = (digitsForTrial.length - 1);
        while (checkingNumbers) {
            for (var n, _pj_c = 0, _pj_a = util.range(startN, endN), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                n = _pj_a[_pj_c];
                if (((digitsForTrial[n] === (digitsForTrial[(n - 1)] + 1)) && (digitsForTrial[n] === (digitsForTrial[(n + 1)] - 1)))) {
                    tmpFirst = digitsForTrial[n];
                    tmpSecond = digitsForTrial[(n - 1)];
                    digitsForTrial[n] = tmpSecond;
                    digitsForTrial[(n - 1)] = tmpFirst;
                }
                if (((digitsForTrial[n] === (digitsForTrial[(n - 1)] - 1)) && (digitsForTrial[n] === (digitsForTrial[(n + 1)] + 1)))) {
                    tmpFirst = digitsForTrial[n];
                    tmpSecond = digitsForTrial[(n - 1)];
                    digitsForTrial[n] = tmpSecond;
                    digitsForTrial[(n - 1)] = tmpFirst;
                }
            }
            checkingNumbers = false;
        }

        //console.log("digitSpan:", digitSpan)
        //console.log("digitSpan:", digitsForTrial)
      Begin Routine:
        import random

        nTrialsBS += 1;

        # set the digit span, always starts at 3 for nTrial =1
        # if correct, go up one
        # if incorrect (once) stay the same
        # if incorrect (twice) go down one
        if correct == 0:
            incorrectCount += 1

        if nTrialsBS ==1:
            correct = [];
            digitSpan = minDigitBS
        else:
            if correct ==1:
                digitSpan = digitSpan + 1
                incorrectCount = 0;
            elif correct ==0 and incorrectCount <2:
                digitSpan = digitSpan
            elif correct ==0 and incorrectCount ==2:
                digitSpan = digitSpan-1
                incorrectCount = 0;

        if digitSpan < minDigitBS:
            digitSpan = minDigitBS

        digitsForTrial = [];

        while len(digitsForTrial) < digitSpan:
            if digitSpan <= 9:
                singleNumber = random.choice(numbersToChoose)
                if digitsForTrial.count(singleNumber) < 1:
                    digitsForTrial.append(singleNumber)
            elif digitSpan > 9:
                 singleNumber = random.choice(numbersToChoose)

                 if len(digitsForTrial) < 9 and digitsForTrial.count(singleNumber)==0:
                     digitsForTrial.append(singleNumber)

                 if len(digitsForTrial) >= 9 and digitsForTrial.count(singleNumber)<2:
                     digitsForTrial.append(singleNumber)

        # check that there is not more than two consecutive numbers (e.g. 1-2-3)
        checkingNumbers = True
        startN = 1
        endN = len(digitsForTrial)-1
        while checkingNumbers:
            for n in range(startN,endN):
                if digitsForTrial[n] == digitsForTrial[n-1] + 1 and digitsForTrial[n] == digitsForTrial[n+1] -1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

                if digitsForTrial[n] == digitsForTrial[n-1] - 1 and digitsForTrial[n] == digitsForTrial[n+1] +1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

            checkingNumbers = False
        # if there are three consecutive numbers, swap the first and second numbers in the series
  Routine showNumbersBS
    CodeComponent getTmpNumberCodeBS
      Code Type = Auto->JS
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      Begin Routine:
        tmpNumber = digitsForTrial[digitLoopBS.thisN]
      End Routine:
        thisExp.addData("digitsForTrial",digitsForTrial)
    TextComponent fixationBS
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentation_textBS
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $tmpNumber
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
  Routine RecallBS
    TextComponent recall_txtBS
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxBS
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_buttonBS
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3BS
      Code Type = Both
      End JS Routine:
        function reversed(x) {
            var revList;
            revList = [];
            for (var i = 0, _pj_a = x.length; (i < _pj_a); i += 1) {
                revList.push(x[((x.length - 1) - i)]);
            }
            return revList;
        }

        digitsForTrial = reversed(digitsForTrial)
        //console.log("reversed digits:", digitsForTrial)

        for (var r, _pj_c = 0, _pj_a = util.range(digitsForTrial.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            r = _pj_a[_pj_c];
            digitsForTrial[r] = digitsForTrial[r].toString();
        }
        digitsForTrial = digitsForTrial.join("");
        if ((textboxBS.text === digitsForTrial.toString())) {
            correctCount = 1;
            fbTxt = "Correct!";
        } else {
            correctCount = 0;
            fbTxt = "Incorrect";
        }
        psychoJS.experiment.addData("correct", correctCount);
      End Routine:
        digitsForTrial.reverse(); # reverse order for backward span

        for r in range(len(digitsForTrial)):
            digitsForTrial[r] = str(digitsForTrial[r])

        digitsForTrial = ''.join(digitsForTrial)

        if textboxBS.text == str(digitsForTrial):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mouseBS
      clickable = cont_buttonBS
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScode_BS
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine FeedbackBS
    TextComponent feedback_textBS
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine END
    TextComponent ThankYou
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      wrapWidth = wrap
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      text:
        Thank you! You have sucessfully completed the second portion of this study.

        You will now be automatically redirected to Qualtrics.
  Routine startDynamicTask
    TextComponent moveToRDMpart2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      text = When you are ready to start ROUND 2 of the task, press "V" or "N".
      wrapWidth = wrap
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    KeyboardComponent key_resp
      allowedKeys = 'v', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine loadDynamicChoiceset
    CodeComponent loadDynamicCScode
      Code Type = Both
      Begin JS Routine:
        var pulledDataForDynamicRDM, dynamicChoicesetResource

        pulledDataForDynamicRDM = psychoJS.experiment._trialsData
        //console.log("pulled data:", pulledDataForDynamicRDM)

        // just pull out the column of data that has the path and filename
        getDynamicCSpath = pulledDataForDynamicRDM.map((trial) => trial['dynamicChoiceSetPath']);
        getDynamicCSname = pulledDataForDynamicRDM.map((trial) => trial['dynamicChoiceSetName']);

        // print in console to make sure it worked
        //console.log("pulled filepath vector:", getDynamicCSpath)
        //console.log("pulled filename vector:", getDynamicCSname)

        // now just get the file name and file path (these are the last element in getchoicesetResource*
        dynamicChoicesetResourceName = getDynamicCSname[getDynamicCSname.length -1]
        dynamicChoicesetResourcePath = getDynamicCSpath[getDynamicCSpath.length -1]

        //console.log("pulled filename:", dynamicChoicesetResourceName)
        //console.log("pulled filepath:", dynamicChoicesetResourcePath)

        psychoJS._serverManager.prepareResources([
          // relative path to index.html
          { name: dynamicChoicesetResourceName, path: dynamicChoicesetResourcePath},
        ]);
  Routine settingUp
    CodeComponent code
      Code Type = Both
      Before JS Experiment:
        psychoJS.start({
          expName,
          expInfo,
          resources: [
            // relative path to index.html
            { name: 'digitSpanTrialNumber.xlsx', path: 'digitSpanTrialNumber.xlsx' },
            { name: 'CGT-choice-set.csv', path: 'CGT-choice-set.csv' },
            { name: 'cgtRDMPractice.xlsx', path: 'cgtRDMPractice.xlsx' },
            { name: 'continue.png', path: 'continue.png' },
            { name: 'digitSpanPractice.xlsx', path: 'digitSpanPractice.xlsx' },
            // absolute path:
            //{ name: 'trialTypes_B.xls', path: 'http://a.website.org/a.path/trialTypes_B.xls' }
          ]
        });
      Begin Experiment:
        instructionsTextHeight = .05
        lettersTextHeight = .1
        wrap = 1.5
      Begin JS Experiment:
        instructionsTextHeight = 0.05;
        lettersTextHeight = 0.1;
        wrap = 1.5;


        var initITIstatic
        var initITIdynamic
      End JS Routine:
        function shuffle(array) {
          let currentIndex = array.length,  randomIndex;

          // While there remain elements to shuffle.
          while (currentIndex != 0) {

            // Pick a remaining element.
            randomIndex = Math.floor(Math.random() * currentIndex);
            currentIndex--;

            // And swap it with the current element.
            [array[currentIndex], array[randomIndex]] = [
              array[randomIndex], array[currentIndex]];
          }

          return array;
        }

        // initialize ITIs
        initITIstatic = Array(25).fill([1, 1.5]).flat();
        initITIdynamic = Array(60).fill([1, 1.5]).flat();

        // shuffle the ITIs using the function above
        initITIstatic = shuffle(initITIstatic);
        initITIdynamic = shuffle(initITIdynamic);

        // save the ITIs
        psychoJS.experiment.addData('initITIstatic', initITIstatic)
        psychoJS.experiment.addData('initITIdynamic', initITIdynamic)
  Routine showOutcomeDynamic
    CodeComponent codeFeedbackReal_3
      Code Type = Both
      Begin Experiment:
        riskygain_values = []
        riskyloss_values = []
        certain_values = []
        choices = []
        outcomes = []
      Begin JS Experiment:
        choices= []
        outcomes = []
      Begin JS Routine:
        var choicetmp, feedbackRounded, outcometmp, outcomes, choices;


        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }

        if (realChoice.keys === undefined) {
            outcometmp = Math.nan;
            choicetmp = Math.nan;
            noRespLoc = [0, 0];
            ocLoc = [5, 5];
            ocGambleLoc = [5, 5];
            ocSafeLoc = [5, 5];
            hideGamLoc = [5, 5];
            extraITI = 0;
        } else if (realChoice.keys === "v" && realloc === 1) {
             outcometmp = random_item([riskyoption1, riskyoption2]);
             choicetmp = 1;
             extraITI = 4-realChoice.rt
             if (outcometmp === riskyoption1) {
                  ocLoc = [(- 0.4), 0.1];
                  ocGambleLoc = [(- 0.4), 0];
                  ocSafeLoc = [5, 5];
                  noRespLoc = [5, 5];
                  hideGamLoc = [(- 0.4), (- 0.125)];
             } else if (outcometmp === riskyoption2) {
                  ocLoc = [(- 0.4), (- 0.1)];
                  ocGambleLoc = [(- 0.4), 0];
                  ocSafeLoc = [5, 5];
                  hideGamLoc = [(- 0.4), 0.125];
                  noRespLoc = [5, 5];
             }
         } else if (realChoice.keys === "v" && realloc === 2) {
             outcometmp = safeoption;
             choicetmp = 0;
             extraITI = 4-realChoice.rt
             ocLoc = [(- 0.4), 0];
             ocGambleLoc = [5, 5];
             ocSafeLoc = ocLoc;
             hideGamLoc = ocGambleLoc;
             noRespLoc = [5, 5];
         } else if (realChoice.keys === "n" && realloc === 1) {
             outcometmp = safeoption;
             choicetmp = 0;
             extraITI = 4-realChoice.rt
             ocLoc = [0.4, 0];
             ocGambleLoc = [5, 5];
             ocSafeLoc = ocLoc;
             hideGamLoc = ocGambleLoc;
             noRespLoc = [5, 5];
        } else if (realChoice.keys === "n" && realloc === 2) {
            outcometmp = random_item([riskyoption1, riskyoption2]);
            choicetmp = 1;
            extraITI = 4-realChoice.rt
            if (outcometmp === riskyoption1) {
                ocLoc = [0.4, 0.1];
                ocGambleLoc = [0.4, 0];
                ocSafeLoc = [5, 5];
                hideGamLoc = [0.4, (- 0.125)];
                noRespLoc = [5, 5];
            } else if (outcometmp === riskyoption2) {
                ocLoc = [0.4, (- 0.1)];
                ocGambleLoc = [0.4, 0];
                ocSafeLoc = [5, 5];
                hideGamLoc = [0.4, 0.125];
                noRespLoc = [5, 5];
            }
        }

        actualITI = initITIdynamic[dynamicRDM.thisN] + extraITI


        if (outcometmp === riskyoption2) {
            feedbackRounded = "$" + Math.round(outcometmp)
        } else {
            feedbackRounded = "$" + (Math.round(outcometmp*100)/100).toFixed(2)
            //feedbackRounded = "$" + Math.round(outcometmp*100)/100
        }

        /*
        console.log("gain:",riskyoption1)
        console.log("loss:",riskyoption2)
        console.log("safe:",safeoption)
        console.log("outcome:", outcometmp)
        console.log("choice:", choicetmp)
        console.log("extra iti:", extraITI)
        console.log("rt", realChoice.rt)
        console.log("actualITI", actualITI)
        console.log("init ITI", initITIdynamic[dynamicRDM.thisN])
        */


        psychoJS.experiment.addData("outcomes", outcometmp);
        psychoJS.experiment.addData("choices", choicetmp);
        psychoJS.experiment.addData("extraITI", extraITI);
        psychoJS.experiment.addData("actualITI",actualITI)
        psychoJS.experiment.addData("init ITI", initITIdynamic[dynamicRDM.thisN])
      Begin Routine:
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      End JS Routine:
        outcomes.push(outcometmp);
        choices.push(choicetmp);
        //riskyloss_values.push(riskyLossReal);
        //riskygain_values.push(riskyGainReal);
        //certain_values.push(certain);
      End Routine:
        thisExp.addData('outcomes', outcometmp)
        thisExp.addData('choices', choicetmp)
    TextComponent noRespTxtReal_3
      letterHeight = 0.08
      pos [set every repeat] = noRespLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You did not respond in time
    PolygonComponent ocGambleReal_3
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocGambleLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent ocSafeReal_3
      fillColor = $[1,1,1]
      nVertices = 130
      pos [set every repeat] = ocSafeLoc
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent outcomeTextReal_3
      color [set every repeat] = black
      letterHeight = 0.1
      pos [set every repeat] = ocLoc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedbackRounded
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    PolygonComponent hideGambleReal_3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      pos [set every repeat] = hideGamLoc
      shape = rectangle
      size = (0.6, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine FStoBStransition
    TextComponent roundTransition
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The first round of the letter task is complete!

        Press "enter" to continue to the last round.
    KeyboardComponent moveToBS
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SpanReminder1
    TextComponent Reminder1
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Your performance on this task does not affect your compensation.

        This task is supposed to be challenging - you are not expected to nor do you need to remember everything or get everything correct!

        Press 'enter' to continue.
    KeyboardComponent movealong2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SpanReminder2
    TextComponent Reminder2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        We are interested in how many digits you can reliably and truthfully recall.

        Please do your best, and do not cheat (e.g. write down or photograph digits). Thank you for completing this task honestly!

        Press 'enter' to continue.
    KeyboardComponent movealong3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine settingUp
  Routine instructions
  Routine pracStart
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cgtRDMPractice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'riskyGain': 18.23, 'riskyLoss': 0, 'alternative': 9.45, 'isi': 2, 'iti': 1, 'loc': 1},
      {'riskyGain': 53.27, 'riskyLoss': 0, 'alternative': 35.16, 'isi': 1, 'iti': 3, 'loc': 1},
      {'riskyGain': 8.27, 'riskyLoss': 0, 'alternative': 1.15, 'isi': 1, 'iti': 2, 'loc': 2},
      {'riskyGain': 45.88, 'riskyLoss': 0, 'alternative': 40.41, 'isi': 3, 'iti': 1, 'loc': 1},
      {'riskyGain': 21.56, 'riskyLoss': 0, 'alternative': 11.96, 'isi': 1, 'iti': 1, 'loc': 2}]
    Routine practiceTask
    Routine isiPrac
    Routine feedback
    Routine itiPrac_2
  LoopTerminator trials
  Routine postPrac
  LoopInitiator staticRDM loopType="TrialHandler"
    conditionsFile = CGT-choice-set.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('riskyoption1', 20.03), ('riskyoption2', 0.0), ('safeoption', 1.99), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 28.21), ('riskyoption2', 0.0), ('safeoption', 3.89), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 17.73), ('riskyoption2', 0.0), ('safeoption', 3.13), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 25.2), ('riskyoption2', 0.0), ('safeoption', 5.4), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 16.0), ('riskyoption2', 0.0), ('safeoption', 4.0), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 22.97), ('riskyoption2', 0.0), ('safeoption', 6.51), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 14.72), ('riskyoption2', 0.0), ('safeoption', 4.64), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 21.32), ('riskyoption2', 0.0), ('safeoption', 7.34), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.94), ('riskyoption2', 0.0), ('safeoption', 5.03), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 20.53), ('riskyoption2', 0.0), ('safeoption', 7.73), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.45), ('riskyoption2', 0.0), ('safeoption', 5.27), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 19.86), ('riskyoption2', 0.0), ('safeoption', 8.07), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 13.04), ('riskyoption2', 0.0), ('safeoption', 5.48), ('ischecktrial', 0)]),
      OrderedDict([('riskyoption1', 19.28), ('riskyoption2', 0.0), ('safeoption', 8.36), ('ischecktrial', 0)])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
    Routine choiceWindow
    Routine isi
    Routine showOutcome
    Routine iti
  LoopTerminator staticRDM
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine computeEstimates
  LoopTerminator trials_2
  Routine loadDynamicChoiceset
  Routine startDynamicTask
  LoopInitiator dynamicRDM loopType="TrialHandler"
    conditionsFile = $dynamicChoicesetResourceName
    loopType = random
    nReps = 1
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    Routine choiceWindow
    Routine isi
    Routine showOutcomeDynamic
    Routine iti
  LoopTerminator dynamicRDM
  Routine rdmToSpanTransition
  Routine SpanGeneralInstructions
  Routine SpanReminder1
  Routine SpanReminder2
  Routine FSInstructions
  LoopInitiator trialFSPractice loopType="TrialHandler"
    conditionsFile = digitSpanPractice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpanForward': 3, 'digits': 342, 'digitsReverse': 24, 'digitSpanReverse': 2, 'digitsReverseCorrAnswer': 42},
      {'digitSpanForward': 3, 'digits': 937, 'digitsReverse': 73, 'digitSpanReverse': 2, 'digitsReverseCorrAnswer': 37}]
    LoopInitiator DigitLoopPractice loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 3
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      Routine ShowNumbersPractice
    LoopTerminator DigitLoopPractice
    Routine RecallPractice
    Routine FeedbackPractice
  LoopTerminator trialFSPractice
  Routine StartRealFS
  LoopInitiator trialsFS loopType="TrialHandler"
    conditionsFile = digitSpanTrialNumber.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialNumber': 1},
      {'trialNumber': 2},
      {'trialNumber': 3},
      {'trialNumber': 4},
      {'trialNumber': 5},
      {'trialNumber': 6},
      {'trialNumber': 7},
      {'trialNumber': 8},
      {'trialNumber': 9},
      {'trialNumber': 10},
      {'trialNumber': 11},
      {'trialNumber': 12},
      {'trialNumber': 13},
      {'trialNumber': 14}]
    Routine selectNumbers
    LoopInitiator digitLoop loopType="TrialHandler"
      loopType = random
      nReps = digitSpan
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      Routine ShowNumbers
    LoopTerminator digitLoop
    Routine Recall
    Routine Feedback
  LoopTerminator trialsFS
  Routine FStoBStransition
  Routine InstructionsBS
  LoopInitiator trialsPracticeBS loopType="TrialHandler"
    conditionsFile = digitSpanPractice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpanForward': 3, 'digits': 342, 'digitsReverse': 24, 'digitSpanReverse': 2, 'digitsReverseCorrAnswer': 42},
      {'digitSpanForward': 3, 'digits': 937, 'digitsReverse': 73, 'digitSpanReverse': 2, 'digitsReverseCorrAnswer': 37}]
    LoopInitiator digitLoopPracticeBS loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine showNumbersPracticeBS
    LoopTerminator digitLoopPracticeBS
    Routine recallPracticeBS
    Routine feedbackPracticeBS
  LoopTerminator trialsPracticeBS
  Routine startRealBS
  LoopInitiator trialsBS loopType="TrialHandler"
    conditionsFile = digitSpanTrialNumber.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialNumber': 1},
      {'trialNumber': 2},
      {'trialNumber': 3},
      {'trialNumber': 4},
      {'trialNumber': 5},
      {'trialNumber': 6},
      {'trialNumber': 7},
      {'trialNumber': 8},
      {'trialNumber': 9},
      {'trialNumber': 10},
      {'trialNumber': 11},
      {'trialNumber': 12},
      {'trialNumber': 13},
      {'trialNumber': 14}]
    Routine selectNumbersBS
    LoopInitiator digitLoopBS loopType="TrialHandler"
      loopType = random
      nReps = digitSpan
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      Routine showNumbersBS
    LoopTerminator digitLoopBS
    Routine RecallBS
    Routine FeedbackBS
  LoopTerminator trialsBS
  Routine END
