PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2240, 1260]
  color = 0.5059, 0.5059, 0.5059
  expName = Shapes
  keyboardBackend = ioHub
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Routines
  Routine INTRO
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Testing out shapes to be manipulated
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SEMI
    PolygonComponent polygon
      fillColor = 1.0000, 1.0000, 1.0000
      shape = circle
      size = (12, 12)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_2
      fillColor = white
      shape = rectangle
      size = (13, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = cm
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine INTRO
  Routine SEMI
